OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.1.0)
Comment
  --:: Remember to change the file
  to the one you recorded before!
Comment
  Overview

  This scenario should be used to train
  the LDA classifier used to detect
  left / right hand movements

  Just configure the Generic Stream Reader
  box to point to the last file you recorded with
  scenario 1-acquisition and fast forward
  this scenario.

  At the end of the training, you will have an estimation
  of the classifier performance printed in the console.
  If this performance is lower than 65%, just run a new
  1-acquisition session to have better results.
Comment
  The preprocessing of this scenario consists
  in re-referencing all the channels to the
  channel 2 (which was located on the nose) and
  to select the 10 channels over the motor cortex
  of the hands. The Spatial Filter box computes
  a surface laplacian filter and reduces the output
  to two channels: one on the left and one on the right.

  note: depending on your acquisition device,
  you may have to tune this part of the scenario

  note: whatever change you do on this
  scenario, don't forget to do the same on the
  online scenario
Comment
  Then comes the feature extraction part.

  The signal is filtered in the alpha/beta [8 24] Hz range.

  Then the Stimulation Based Epoching box
  is used to select four seconds of signal half a second
  after the instruction was shown to the user
  (OVTK_GDF_Left and OVTK_GDF_Right).

  The signal is then splitted in blocks of 1 second
  every 16th second and the logarithmic band power is
  computed thanks to the two Simple DSP and
  the Signal Average boxes.

  The matrices can then be converted in feature vectors.

  note: depending on what frequency range
  reacts best for the subject, you may have to tune
  this part of the scenario

  note: whatever change you do on this
  scenario, don't forget to do the same on the
  classifier trainer scenario
Comment
  The Classifier Trainer box produces a
  configuration file at the end of the experiment
  which will be used during online sessions.

  The box raised the stimulation
  OVTK_StimulationId_TrainCompleted
  at the end of the training process. This stimulation is
  used to stop the scenario with a Player Controller.

Generic stream reader => #0
  Filename = ${Player_ScenarioDirectory}/motor-imagery-1-[2021.01.08-17.53.03].ov
#0.Output stream 2 -> Channel Rename (69 Channel) => #1
  New channel names = Fp1;Fz;F3;F7;PO9;FC5;FC1;C3;T7;TP9;CP5;CP1;Pz;P3;P7;O1;Oz;O2;P4;P8;PO10;CP6;CP2;Cz;C4;T8;FT10;FC6;FC2;F4;F8;Fp2;AF7;AF3;AFz;F1;F5;FT7;FC3;C1;C5;TP7;CP3;P1;P5;PO7;PO3;POz;PO4;PO8;P6;P2;CPz;CP4;TP8;C6;C2;FC4;FT8;F6;AF8;AF4;F2;FCz;VEOG;HEOG;ECG;LEMG;REMG
Input stream 1=#1, Input stream 2=#0.Output stream 3 -> Identity => #2
#2.Output stream 1 -> Common Average Reference
-> Channel Selector "C4;FC5;FC3;C5" => #4
  Channel List = C4;FC5;FC3;C5
  Action = Select
  Channel Matching Method = Name
Input stream 1=#4, Input stream 2=#2.Output stream 2 -> Identity => #5
Input signal=#5.Output stream 1, Input stimulations=#5.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = 4.000000
  Epoch offset (in sec) = 0.500000
  Stimulation to epoch from = OVTK_GDF_Left
-> Spectral Analysis => #7
  Amplitude = true
  Phase = false
  Real Part = false
  Imaginary Part = false
#7.Amplitude -> Frequency Band Selector
  Frequencies to select = 8:30
-> Spectrum Average
  Considers zeros = false
-> Feature aggregator => #10
Input signal=#5.Output stream 1, Input stimulations=#5.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = 4.000000
  Epoch offset (in sec) = 0.500000
  Stimulation to epoch from = OVTK_GDF_Right
-> Spectral Analysis => #12
  Amplitude = true
  Phase = false
  Real Part = false
  Imaginary Part = false
#12.Amplitude -> Frequency Band Selector
  Frequencies to select = 8:30
-> Spectrum Average
  Considers zeros = false
-> Feature aggregator => #15
Stimulations=#5.Output stream 2, Features for class 1=#10, Features for class 2=#15 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = ${Player_ScenarioDirectory}/motor-imagery-bci-config-classifier_6channelSpatialfilter_15to10.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_GDF_Left
  Class 2 label = OVTK_GDF_Right
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 7
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
#2.Output stream 1 -> 0x341d3912 Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
