OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
Comment
  --:: Remember to change the file
  to the one you recorded before!
Settings
  Directory = ${Player_ScenarioDirectory}
  EEGData = motor-imagery.ov
  Output1 = spectrumAmplitude-Left.csv
  Output2 = spectrumAmplitude-Right.csv
  ChannelNames = Fp1;Fp2;F7;F3;Fz;F4;F8;FC5;FC1;FC2;FC6;T7;C3;Cz;C4;T8;TP9;CP5;CP1;CP2;CP6;TP10;P7;P3;Pz;P4;P8;PO9;O1;Oz;O2;PO10
  StimulationEpoch = 1
  StimulationDelay = 0
  TimeWindowLength = 0.4
  TimeWindowShift = 0.372
  AutoRegressiveOrder = 19
  PsdSize = 500

Generic stream reader => #0
  Filename = $var{Directory}/$var{EEGData}
#0.Output stream 2 -> Channel Rename (32 Channel) => #1
  New channel names = $var{ChannelNames}
Input stream 1=#1, Input stream 2=#0.Output stream 3 -> Identity => #2
#2.Output stream 1 -> 0x341d3912 Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
#2.Output stream 1 -> Common Average Reference => #4
Input stream 1=#4, Input stream 2=#2.Output stream 2 -> Identity => #5
Input signal=#5.Output stream 1, Input stimulations=#5.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = $var{StimulationDelay}
  Stimulation 1 = OVTK_GDF_Left
-> Time based epoching
  Epoch duration (in sec) = $var{TimeWindowLength}
  Epoch intervals (in sec) = $var{TimeWindowShift}
-> AutoRegressive Coefficients => #8
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
#8.PSD -> Power Spectrum (burg) - Left condition
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Positive Data Only ? = false
  Gain = 1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
Input stream=#8.PSD -> CSV File Writer
  Filename = $var{Directory}/$var{Output1}
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#5.Output stream 1, Input stimulations=#5.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = $var{StimulationDelay}
  Stimulation 1 = OVTK_GDF_Right
-> Time based epoching
  Epoch duration (in sec) = $var{TimeWindowLength}
  Epoch intervals (in sec) = $var{TimeWindowShift}
-> AutoRegressive Coefficients => #13
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
Input stream=#13.PSD -> CSV File Writer
  Filename = $var{Directory}/$var{Output2}
  Precision = 10
  Append data = false
  Only last matrix = false
#13.PSD -> Power Spectrum (burg) - Right condition
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Positive Data Only ? = false
  Gain = 1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
#5.Output stream 2 -> Run Command
  Stimulation 1 = OVTK_StimulationId_ExperimentStop
  Command 1 = start python.exe C:\\Users\\arthur.desbois\\Documents\\dev\\openvibeScripting\\openvibe-automation\\featureExtractionInterface.py
  Stimulation 2 = 02
  Command 2 =
#5.Output stream 2 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#5.Output stream 2 -> 0x341d3912 Stimulation listener
  Log level to use = Information
