OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
Settings
  Directory = ${Player_ScenarioDirectory}
  EEGData = motor-imagery.ov
  OutputWeights = classifier-weights.xml
  ChannelNames = Fp1;Fp2;F7;F3;Fz;F4;F8;FC5;FC1;FC2;FC6;T7;C3;Cz;C4;T8;TP9;CP5;CP1;CP2;CP6;TP10;P7;P3;Pz;P4;P8;PO9;O1;Oz;O2;PO10
  StimulationEpoch = 1
  StimulationDelay = 0
  TimeWindowLength = 0.4
  TimeWindowShift = 0.372
  AutoRegressiveOrder = 19
  PsdSize = 500

Generic stream reader => #0
  Filename = $var{Directory}/$var{EEGData}
#0.Output stream 2 -> Channel Rename (32 Channel)
  New channel names = $var{ChannelNames}
-> Common Average Reference => #2
Input stream 1=#2, Input stream 2=#0.Output stream 3 -> Identity => #3
Input signal=#3.Output stream 1, Input stimulations=#3.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = $var{StimulationDelay}
  Stimulation 1 = OVTK_GDF_Left
-> Channel Selector "C4"
  Channel List = C4
  Action = Select
  Channel Matching Method = Name
-> Time based epoching
  Epoch duration (in sec) = $var{TimeWindowLength}
  Epoch intervals (in sec) = $var{TimeWindowShift}
-> AutoRegressive Coefficients => #7
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
#7.PSD -> Frequency Band Selector
  Frequencies to select = 8:30
-> Spectrum Average
  Considers zeros = false
-> Feature aggregator => #10
Input signal=#3.Output stream 1, Input stimulations=#3.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = $var{StimulationDelay}
  Stimulation 1 = OVTK_GDF_Right
-> Channel Selector "C4"
  Channel List = C4
  Action = Select
  Channel Matching Method = Name
-> Time based epoching
  Epoch duration (in sec) = $var{TimeWindowLength}
  Epoch intervals (in sec) = $var{TimeWindowShift}
-> AutoRegressive Coefficients => #14
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
#14.PSD -> Frequency Band Selector
  Frequencies to select = 8:30
-> Spectrum Average
  Considers zeros = false
-> Feature aggregator => #17
Stimulations=#3.Output stream 2, Features for class 1=#10, Features for class 2=#17 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = $var{Directory}/$var{OutputWeights}
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_GDF_Left
  Class 2 label = OVTK_GDF_Right
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 7
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
