OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Online Use
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Settings
  Directory = ${Player_ScenarioDirectory}
  EEGDataLive = motor-imagery-live.ov
  ClassifWeights = classifier-weights.xml
  MI_Stimulations = mi-stimulations.lua
  ChannelNames = Fp1;Fp2;F7;F3;Fz;F4;F8;FC5;FC1;FC2;FC6;T7;C3;Cz;C4;T8;TP9;CP5;CP1;CP2;CP6;TP10;P7;P3;Pz;P4;P8;PO9;O1;Oz;O2;PO10
  TimeWindowLength = 0.4
  TimeWindowShift = 0.372
  AutoRegressiveOrder = 19
  PsdSize = 500

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal stream, Input stream 3=#0.Stimulations -> Identity => #1
#1.Output stream 2 -> Channel Rename (32 Channel)
  New channel names = $var{ChannelNames}
Input stream 1=#1.Output stream 1, Input stream 2=#1.Output stream 2, Input stream 3=#1.Output stream 3 -> Identity => #3
#3.Output stream 2 -> Common Average Reference => #4
Input stream 1=#4, Input stream 2=#3.Output stream 3 -> Identity => #5
#5.Output stream 1 -> Channel Selector "C4"
  Channel List = C4
  Action = Select
  Channel Matching Method = Name
-> Time based epoching
  Epoch duration (in sec) = $var{TimeWindowLength}
  Epoch intervals (in sec) = $var{TimeWindowShift}
-> AutoRegressive Coefficients => #8
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
#8.PSD -> Frequency Band Selector
  Frequencies to select = 8:30
-> Spectrum Average
  Considers zeros = false
-> Feature aggregator => #11
Features=#11 -> Classifier processor => #12
  Filename to load configuration from = $var{Directory}/$var{ClassifWeights}
Input stream 1=#3.Output stream 1, Input stream 2=#3.Output stream 2, Input stream 3=#3.Output stream 3 -> Generic stream writer
  Filename = $var{Directory}/$var{EEGDataLive}
  Use compression = false
Graz Motor Imagery BCI Stimulator => #14
  Lua Script = $var{Directory}/$var{MI_Stimulations}
  Number of Trials for Each Class = 5
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 2
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 1
  Feedback Duration (in sec) = 0
  End of Trial Minimum Duration (in sec) = 1
  End of Trial Maximum Duration (in sec) = 1
Stimulations=#14, Amplitude=#12.Hyperplane distance -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false

0x341d3912 Generic stream reader
  Filename = C:/Users/arthur.desbois/Documents/dev/openvibeScripting/openvibe-automation/generated/Train_2_sub_01.ov
