OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)
Comment
  - CSV file containing the signal from StimDelay, with duration StimEpoch (for recombination before training)
  - CSV file containing the spectrum of the signal from StimDelay, duration StimEpoch (for analysis)
  - CSV file containing the spectrum of the signal from [-StimEpoch], duration StimEpoch ("baseline")
Comment
  Keep only the sub selection of channels
  set by the user
Comment
  Connectivity output :
  frequencies x channels x channels
  (ex: 500 x 64 x 64)

  Matrix 3D to 2D : average over last "channel" dimension :
  frequencies x channels
  (ex: 500 x 64)
Comment
  /!\ NO CAR for connectivity /!\
Comment
  TRIALS SIGNALS
  Both classes in one file
Comment
  TRIALS Node Strength
  (computed from averaging the connectivity
   matrix across a "channel" dimension)
  Class 1 & 2
Comment
  BASELINE SPECTRUM
  Class 1
Comment
  BASELINE SPECTRUM
  Class 2
Settings
  ExtractionIdx = 1
  EEGData = motor-imagery.ov
  SignalsPath = signals
  AnalysisPath = extract
  TrainingPath = train
  OutputTrials = motor-imagery-TRIALS.csv
  OutputConnect1 = motor-imagery-Connectivity-LEFT.csv
  OutputConnect2 = motor-imagery-Connectivity-RIGHT.csv
  OutputBaseline1 = motor-imagery-CONNECTIVITY-BASELINE-LEFT.csv
  OutputBaseline2 = motor-imagery-CONNECTIVITY-BASELINE-RIGHT.csv
  ChannelNames = Fp1;Fp2;F7;F3;Fz;F4;F8;FC5;FC1;FC2;FC6;T7;C3;Cz;C4;T8;TP9;CP5;CP1;CP2;CP6;TP10;P7;P3;Pz;P4;P8;PO9;O1;Oz;O2;PO10
  ChannelSubset =
  StimulationEpoch = 1.5
  StimulationDelay = 0
  ConnectivityLength = 0.5
  ConnectivityOverlap = 0.0
  ConnectivityShift = 0
  AutoRegressiveOrder = 15
  PsdSize = 256

0x341d3912 Generic stream reader
  Filename = C:/Users/arthur.desbois/Documents/dev/openvibeScripting/openvibe-automation/generated/signals/Train-[2022.03.15-15.43.22].ov

Generic stream reader => #1
  Filename = ${Player_ScenarioDirectory}/$var{SignalsPath}/$var{EEGData}
#1.Output stream 2 -> Channel Rename
  New channel names = $var{ChannelNames}
-> Channel Selector : subset => #3
  Channel List = $var{ChannelSubset}
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 Common Average Reference
Input stream 1=#3, Input stream 2=#1.Output stream 3 -> Identity => #5
Input signal=#5.Output stream 1, Input stimulations=#5.Output stream 2 -> Stimulation based epoching => #6
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = $var{StimulationDelay}
  Stimulation 1 = OVTK_GDF_Left
  Stimulation 2 = OVTK_GDF_Right
Input stream=#6, Stimulations stream=#5.Output stream 2 -> CSV File Writer
  Filename = ${Player_ScenarioDirectory}/sessions/$var{ExtractionIdx}/$var{TrainingPath}/$var{OutputTrials}
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#5.Output stream 1, Input stimulations=#5.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = $var{StimulationDelay}
  Stimulation 1 = OVTK_GDF_Left
-> Time based epoching
  Epoch duration (in sec) = $var{ConnectivityLength}
  Epoch intervals (in sec) = $var{ConnectivityShift}
-> Connectivity Measure : Burg
  Channel subselection =
  Metric = MagnitudeSquaredCoherence
  Connectivity Measure Length (in sec) = $var{ConnectivityLength}
  Connectivity Measure Overlap (in %) = 0
  DC removal = true
  FFT size (frequency taps) = $var{PsdSize}
  psd Method = Burg
  Auto-regressive model order = $var{AutoRegressiveOrder}
-> Matrix 3D to 2D => #11
  Selection mode = Average
  Dimension to work on = 1
Input stream=#11 -> CSV File Writer : Output1
  Filename = ${Player_ScenarioDirectory}/sessions/$var{ExtractionIdx}/$var{AnalysisPath}/$var{OutputConnect1}
  Precision = 6
  Append data = false
  Only last matrix = false
Input signal=#5.Output stream 1, Input stimulations=#5.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = $var{StimulationDelay}
  Stimulation 1 = OVTK_GDF_Right
-> Time based epoching
  Epoch duration (in sec) = $var{ConnectivityLength}
  Epoch intervals (in sec) = $var{ConnectivityShift}
-> Connectivity Measure : Burg
  Channel subselection =
  Metric = MagnitudeSquaredCoherence
  Connectivity Measure Length (in sec) = $var{ConnectivityLength}
  Connectivity Measure Overlap (in %) = 0
  DC removal = true
  FFT size (frequency taps) = $var{PsdSize}
  psd Method = Burg
  Auto-regressive model order = $var{AutoRegressiveOrder}
-> Matrix 3D to 2D => #16
  Selection mode = Average
  Dimension to work on = 1
Input stream=#16 -> CSV File Writer : Output2
  Filename = ${Player_ScenarioDirectory}/sessions/$var{ExtractionIdx}/$var{AnalysisPath}/$var{OutputConnect2}
  Precision = 6
  Append data = false
  Only last matrix = false
Input signal=#5.Output stream 1, Input stimulations=#5.Output stream 2 -> 0x341d3912 Stimulation based epoching
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = -1
  Stimulation 1 = OVTK_GDF_Left
-> 0x341d3912 Time based epoching
  Epoch duration (in sec) = $var{ConnectivityLength}
  Epoch intervals (in sec) = $var{ConnectivityShift}
-> 0x341d3912 Connectivity Measure : Burg
  Metric = MagnitudeSquaredCoherence
  Connectivity Measure Length (in sec) = $var{ConnectivityLength}
  Connectivity Measure Overlap (in %) = $var{ConnectivityOverlap}
  DC removal = true
  FFT size (frequency taps) = $var{PsdSize}
  psd Method = Burg
  Auto-regressive model order = $var{AutoRegressiveOrder}
-> 0x341d3912 Matrix 3D to 2D => #21
  Selection mode = Average
  Dimension to work on = 2
Input stream=#21 -> 0x341d3912 CSV File Writer : Baseline1
  Filename = ${Player_ScenarioDirectory}/sessions/$var{ExtractionIdx}/$var{AnalysisPath}/$var{OutputBaseline1}
  Precision = 6
  Append data = false
  Only last matrix = false
Input signal=#5.Output stream 1, Input stimulations=#5.Output stream 2 -> 0x341d3912 Stimulation based epoching
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = -1
  Stimulation 1 = OVTK_GDF_Right
-> 0x341d3912 Time based epoching
  Epoch duration (in sec) = $var{ConnectivityLength}
  Epoch intervals (in sec) = $var{ConnectivityShift}
-> 0x341d3912 Connectivity Measure : Burg
  Metric = MagnitudeSquaredCoherence
  Connectivity Measure Length (in sec) = $var{ConnectivityLength}
  Connectivity Measure Overlap (in %) = $var{ConnectivityOverlap}
  DC removal = true
  FFT size (frequency taps) = $var{PsdSize}
  psd Method = Burg
  Auto-regressive model order = $var{AutoRegressiveOrder}
-> 0x341d3912 Matrix 3D to 2D => #26
  Selection mode = Average
  Dimension to work on = 2
Input stream=#26 -> 0x341d3912 CSV File Writer : Baseline2
  Filename = ${Player_ScenarioDirectory}/sessions/$var{ExtractionIdx}/$var{AnalysisPath}/$var{OutputBaseline2}
  Precision = 6
  Append data = false
  Only last matrix = false
#1.Output stream 2 -> Timeout
  Timeout delay = 5
  Output Stimulation = OVTK_StimulationId_ExperimentStop
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#1.Output stream 3 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
