OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Online Use
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  Use ACQ client or pre-recorded file
Comment
  Rename your channels if necessary
Comment
  Visualize activity in 1-40Hz
Comment
  Save recorded EEG signals for later use
Comment
  Direct feedback
  You can replace "Matrix Display"
  with any other visualization technique
Comment
  Connectivity pipeline
  after SPLIT box : selected features
Settings
  EEGDataLive = motor-imagery-live.ov
  ClassifWeights = classifier-weights.xml
  ExtractionIdx = 1
  MI_Stimulations = mi-stimulations.lua
  ChannelNames = FP1;FP2;F7;F3;Fz;F4;F6;FC5;FC1;FC2;FC6;T7;C3;Cz;C4;T8;TP9;CP5;CP1;CP2;CP6;TP10;P7;P3;Pz;P4;P8;PO9;O1;Oz;O2;PO10
  ConnectivityLength = 1
  ConnectivityOverlap = 0
  ConnectivityShift = 1
  AutoRegressiveOrder = 19
  PsdSize = 500

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal stream, Input stream 3=#0.Stimulations -> Identity => #1
#1.Output stream 2 -> 0x341d3912 Channel Rename (32 Channel)
  New channel names = $var{ChannelNames}
Input stream 1=#1.Output stream 1, Input stream 2=#1.Output stream 2, Input stream 3=#1.Output stream 3 -> Identity => #3
Input stream 1=#3.Output stream 1, Input stream 2=#3.Output stream 2, Input stream 3=#3.Output stream 3 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/$var{EEGDataLive}
  Use compression = false
#3.Output stream 2 -> 0x341d3912 Temporal Filter => #5
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
Data=#5 -> 0x341d3912 Signal display "Filtered signals (1-40Hz)"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Input stream 1=#3.Output stream 2, Input stream 2=#3.Output stream 3 -> Identity => #7
#7.Output stream 1 -> Time based epoching => #8
  Epoch duration (in sec) = $var{ConnectivityLength}
  Epoch intervals (in sec) = $var{ConnectivityShift}
-> Identity "SPLIT"
-> Connectivity Measure
  Channel subselection = A
  Metric = MagnitudeSquaredCoherence
  Connectivity Measure Length (in sec) = $var{ConnectivityLength}
  Connectivity Measure Overlap (in %) = 0
  DC removal = true
  FFT size (frequency taps) = $var{PsdSize}
  psd Method = Burg
  Auto-regressive model order = $var{AutoRegressiveOrder}
-> Matrix 3D to 2D
  Selection mode = Average
  Dimension to work on = 1
-> Channel Selector "Frequency Band Selector"
  Channel List = 22
  Action = Select
  Channel Matching Method = Smart
-> Matrix Transpose
-> Channel Selector
  Channel List = CP3
  Action = Select
  Channel Matching Method = Smart
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 18.0
-> Feature aggregator => #16
Features=#16 -> Classifier processor => #17
  Filename to load configuration from = $var{ClassifWeights}
Input stream=#17.Probability values, Stimulations stream=#17.Labels -> CSV File Writer
  Filename = ${Player_ScenarioDirectory}/sessions/$var{ExtractionIdx}/results/Test-[$core{date}-$core{time}]-results-classif.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#8 -> Connectivity Measure
  Channel subselection = CP3
  Metric = MagnitudeSquaredCoherence
  Connectivity Measure Length (in sec) = $var{ConnectivityLength}
  Connectivity Measure Overlap (in %) = 0
  DC removal = true
  FFT size (frequency taps) = $var{PsdSize}
  psd Method = Burg
  Auto-regressive model order = $var{AutoRegressiveOrder}
-> Matrix 3D to 2D
  Selection mode = Average
  Dimension to work on = 1
-> Channel Selector "Frequency Band Selector"
  Channel List = 22
  Action = Select
  Channel Matching Method = Smart
-> Matrix Transpose
-> Channel Selector
  Channel List = CP3
  Action = Select
  Channel Matching Method = Smart
-> Spectrum Average
  Considers zeros = false
-> 0x341d3912 Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#0.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Graz Motor Imagery BCI Stimulator => #27
  Lua Script = ${Player_ScenarioDirectory}/$var{MI_Stimulations}
  Number of Trials for Each Class = 20
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 10
  Wait For Beep Duration (in sec) = 0
  Wait For Cue Duration (in sec) = 1.5
  Display Cue Duration (in sec) = 1.5
  Feedback Duration (in sec) = 3
  End of Trial Minimum Duration (in sec) = 2.5
  End of Trial Maximum Duration (in sec) = 3.5
Stimulations=#27, Amplitude=#17.Hyperplane distance -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false

0x341d3912 Generic stream reader
  Filename = C:/Users/arthur.desbois/Documents/dev/openvibeScripting/openvibe-automation/generated/Train_2_sub_01.ov
