OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
Settings
  Directory = ${Player_ScenarioDirectory}
  Signal1 = MI-1.ov
  Signal2 = MI-2.ov
  Output = MI-comp-1.ov

Generic stream reader => #0
  Filename = $var{Directory}/$var{Signal1}
Generic stream reader => #1
  Filename = $var{Directory}/$var{Signal1}
Input signal 1=#0.Output Signal, Input stimulations 1=#0.Output Stimulations, Input signal 2=#1.Output Signal, Input stimulations 2=#1.Output Stimulations -> Signal Concatenation => #2
  Time out before assuming end-of-file (in sec) = 5
  End-of-file stimulation for input 1 = OVTK_StimulationId_ExperimentStop
  End-of-file stimulation for input 2 = OVTK_StimulationId_ExperimentStop
Input Signal=#2.Signal, Input Stimulations=#2.Stimulations -> Generic stream writer
  Filename = $var{Directory}/$var{Output}
  Use compression = false
#2.Status -> Player Controller
  Stimulation name = OVTK_StimulationId_EndOfFile
  Action to perform = Stop
