OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Data Acquisition
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  Stimulation Generation
  + Instructions display (arrows, crosses...)
Comment
  Stop scenario when reaching
  "Experiment Stop"
Comment
  Signal recorder
Comment
  Signal Monitoring
Comment
  Bipolar montage viz
  (anteroposterior)
Comment
  Writing metadata in CSV file
  (used for getting sampling frequency, list of electrodes...)
Comment
  Monopolar viz
Settings
  EEGData = MI-[$core{date}-$core{time}].ov
  EEGMetaData = MI-[$core{date}-$core{time}]-META.csv
  MI_Stimulations = mi-stimulations.lua
  SignalsDirectory = signals

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#0.Signal stream, Input stream 2=#0.Stimulations -> Identity => #1
  0xac367a9c = 6
Input stream 1=#0.Experiment information, Input stream 2=#1.Output stream 1, Input stream 3=#1.Output stream 2 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/$var{SignalsDirectory}/$var{EEGData}
  Use compression = false
#1.Output stream 1 -> Temporal Filter => #3
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
Input stream 1=#3, Input stream 2=#1.Output stream 1, Input stream 3=#1.Output stream 2 -> Identity => #4
  0xac367a9c = 6
#4.Output stream 2 -> Temporal Filter => #5
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
  Low Cut-off Frequency 2 (Hz) = 1
  High Cut-off Frequency 2 (Hz) = 40
#5.Output signal -> Channel Selector "Banana montage"
  Channel List = Fp1;F3;C3;P3;O1;F7;T7;P7;Fp2;F4;C4;P4;O2;F8;T8;P8;Fz;Cz;Pz
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter
  Spatial Filter Coefficients = 1; -1; 0; 0; 0; 0; 0; 0; 0; 0; 0; 0; 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0
  Number of Output Channels = 18
  Number of Input Channels = 19
  Filter matrix file =
-> Channel Rename => #8
  New channel names = Fp1-F3; Fp1-F7; F3-C3; F7-T7; C3-P3; T7-P7; P3-O1; P7-O1; Fz-Cz; Cz-Pz; Fp2-F4; Fp2-F8; F4-C4; F8-T8; C4-P4; T8-P8; P4-O2; P8-O2
Data=#8 -> Signal display "Bipolar (1-40 Hz)"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#4.Output stream 1 -> Signal display "Filtered signals (1-40Hz)"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Input signal=#1.Output stream 1, Input stimulations=#1.Output stream 2 -> Stimulation based epoching => #11
  Epoch duration (in sec) = 0.1
  Epoch offset (in sec) = 0
  Stimulation 1 = OVTK_StimulationId_ExperimentStart
#0.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#0.Stimulations -> Identity => #13
  0xac367a9c = 6
Input stream=#11, Stimulations stream=#13 -> CSV File Writer
  Filename = ${Player_ScenarioDirectory}/$var{SignalsDirectory}/$var{EEGMetaData}
  Precision = 10
  Append data = false
  Only last matrix = false
#0.Signal stream -> AutoRegressive Coefficients => #15
  Order = 19
  PSD size = 500
  Detrend / DC removal = True
#15.PSD -> Frequency Band Selector
  Frequencies to select = 14:20
-> Spectrum Average
  Considers zeros = false
-> TCP Writer
  Port = 5978
  Output format = Raw

Graz Motor Imagery BCI Stimulator => #19
  Lua Script = ${Player_ScenarioDirectory}/$var{MI_Stimulations}
  Number of Trials for Each Class = 20
  First Class = OVTK_GDF_Left
  Baseline Duration (in sec) = 20
  Wait For Cue Duration (in sec) = 3
  Reaction Time (in sec) = 1.0
  MI Task Duration (in sec) = 3.0
  End of Trial Minimum Duration (in sec) = 2.000
  End of Trial Maximum Duration (in sec) = 3.500
Stimulations=#19 -> 0x341d3912 Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
Stimulation=#19 -> CursorInterface
  Show Instruction = true
  Show Feedback = true
  Delay feedback = false
  Show Accuracy = false
  Prediction to integrate = 5
  Positive Feedback only = false
  Fullscreen = false
  Mode of Display = 2
  Mode of Classification = 1
  Display Score = false
#19 -> TCP Writer
  Port = 5698
  Output format = String
