OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)
Comment
  Signal Monitoring
Comment
  Bipolar montage viz
  (anteroposterior)
Comment
  Monopolar viz

Timeout
  Timeout delay = 120
  Output Stimulation = OVTK_StimulationId_Label_00
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop

Acquisition client => #2
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input Signal=#2.Signal stream, Input Stimulations=#2.Stimulations -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/RestingState-[$core{date}-$core{time}].ov
  Use compression = false
#2.Signal stream -> Temporal Filter => #4
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
  Low Cut-off Frequency 2 (Hz) = 1
  High Cut-off Frequency 2 (Hz) = 40
Data=#4.Output signal -> Signal display "Filtered signals (1-40Hz)"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#4.Output signal 2 -> Channel Selector "Banana montage"
  Channel List = Fp1;F3;C3;P3;O1;F7;T7;P7;Fp2;F4;C4;P4;O2;F8;T8;P8;Fz;Cz;Pz
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter
  Spatial Filter Coefficients = 1; -1; 0; 0; 0; 0; 0; 0; 0; 0; 0; 0; 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0
  Number of Output Channels = 18
  Number of Input Channels = 19
  Filter matrix file =
-> Channel Rename => #8
  New channel names = Fp1-F3; Fp1-F7; F3-C3; F7-T7; C3-P3; T7-P7; P3-O1; P7-O1; Fz-Cz; Cz-Pz; Fp2-F4; Fp2-F8; F4-C4; F8-T8; C4-P4; T8-P8; P4-O2; P8-O2
Data=#8 -> Signal display "Bipolar (1-40 Hz)"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
