OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)
Comment
  - CSV file containing the signal from StimDelay, with duration StimEpoch (for recombination before training)
  - CSV file containing the spectrum of the signal from StimDelay, duration StimEpoch (for analysis)
  - CSV file containing the spectrum of the signal from [-StimEpoch], duration StimEpoch ("baseline")
Comment
  Keep only the sub selection of channels
  set by the user

  BCINET : DISABLED AS WE DIRECTLY USE
  CHANNEL NAMES PROVIDED BY BRAINVISION RECORDER
Comment
  /!\ CAR ONLY FOR SPECTRUM /!\
Comment
  Connectivity output :
  frequencies x channels x channels
  (ex: 500 x 64 x 64)

  Matrix 3D to 2D : average over last "channel" dimension :
  frequencies x channels
  (ex: 500 x 64)
Comment
  TRIALS SIGNALS
  baseline in one file, actual trial in another
Comment
  BASELINE SPECTRUM
  ( [stim ; stim + stimdelay] )
Comment
  TRIALS SPECTRUM
  (after "simulation delay")
Comment
  TRIALS Node Strength
  (computed from averaging the connectivity
   matrix across a "channel" dimension)
  Baseline + Post offset
Settings
  EEGData = motor-imagery.ov
  ExtractionIdx = 1
  SignalsPath = signals
  AnalysisPath = extract
  TrainingPath = train
  OutputTrials = motor-imagery-TRIALS.csv
  OutputBaseline = motor-imagery-BASELINE.csv
  OutputSpect1 = motor-imagery-SPECTRUM-RIGHT.csv
  OutputSpect2 = motor-imagery-SPECTRUM-LEFT.csv
  OutputConnect1 = motor-imagery-CONNECTIVITY-RIGHT.csv
  OutputConnect2 = motor-imagery-CONNECTIVITY-LEFT.csv
  ChannelNames = Fp1;Fp2;F7;F3;Fz;F4;F8;FC5;FC1;FC2;FC6;T7;C3;Cz;C4;T8;TP9;CP5;CP1;CP2;CP6;TP10;P7;P3;Pz;P4;P8;PO9;O1;Oz;O2;PO10
  ChannelSubset =
  StimulationEpoch = 1.5
  StimulationDelay = 0
  TimeWindowLength = 0.25
  TimeWindowShift = 0.161
  AutoRegressiveOrder = 15
  ConnectivityLength = 0.5
  ConnectivityOverlap = 0.0
  ConnectivityShift = 0.25
  PsdSize = 256

0x341d3912 Generic stream reader
  Filename = C:/Users/arthur.desbois/Documents/dev/openvibeScripting/openvibe-automation/generated/signals/Train-[2022.03.15-15.43.22].ov

Generic stream reader => #1
  Filename = ${Player_ScenarioDirectory}/$var{SignalsPath}/$var{EEGData}
#1.Output stream 2 -> 0x341d3912 Channel Rename
  New channel names = $var{ChannelNames}
-> 0x341d3912 Channel Selector : subset
  Channel List = $var{ChannelSubset}
  Action = Select
  Channel Matching Method = Smart
#1.Output stream 2 -> Timeout
  Timeout delay = 5
  Output Stimulation = OVTK_StimulationId_ExperimentStop
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#1.Output stream 3 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Input stream 1=#1.Output stream 2, Input stream 2=#1.Output stream 3 -> Identity => #7
#7.Output stream 1 -> Common Average Reference => #8
Input stream 1=#8, Input stream 2=#7.Output stream 2 -> Identity => #9
Input signal=#9.Output stream 1, Input stimulations=#9.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = 0
  Stimulation 1 = OVTK_GDF_Start_Of_Trial
-> Time based epoching
  Epoch duration (in sec) = $var{TimeWindowLength}
  Epoch intervals (in sec) = $var{TimeWindowShift}
-> AutoRegressive Coefficients => #12
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
Input stream=#12.PSD -> CSV File Writer "CSV Writer: OutputSpect1"
  Filename = ${Player_ScenarioDirectory}/sessions/$var{ExtractionIdx}/$var{AnalysisPath}/$var{OutputSpect1}
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#9.Output stream 1, Input stimulations=#9.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = $var{StimulationDelay}
  Stimulation 1 = OVTK_GDF_Left
-> Time based epoching
  Epoch duration (in sec) = $var{TimeWindowLength}
  Epoch intervals (in sec) = $var{TimeWindowShift}
-> AutoRegressive Coefficients => #16
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
Input stream=#16.PSD -> CSV File Writer "CSV Writer: OutputSpect2"
  Filename = ${Player_ScenarioDirectory}/sessions/$var{ExtractionIdx}/$var{AnalysisPath}/$var{OutputSpect2}
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#7.Output stream 1, Input stimulations=#7.Output stream 2 -> Stimulation based epoching => #18
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = 0
  Stimulation 1 = OVTK_GDF_Start_Of_Trial
Input signal=#7.Output stream 1, Input stimulations=#7.Output stream 2 -> Stimulation based epoching => #19
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = $var{StimulationDelay}
  Stimulation 1 = OVTK_GDF_Left
Input signal=#7.Output stream 1, Input stimulations=#7.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = 0
  Stimulation 1 = OVTK_GDF_Start_Of_Trial
-> Time based epoching
  Epoch duration (in sec) = $var{ConnectivityLength}
  Epoch intervals (in sec) = $var{ConnectivityShift}
-> Connectivity Measure : Burg
  Metric = MagnitudeSquaredCoherence
  Connectivity Measure Length (in sec) = $var{ConnectivityLength}
  Connectivity Measure Overlap (in %) = 0
  DC removal = true
  FFT size (frequency taps) = $var{PsdSize}
  psd Method = Burg
  Auto-regressive model order = $var{AutoRegressiveOrder}
-> Matrix 3D to 2D => #23
  Selection mode = Average
  Dimension to work on = 2
Input stream=#23 -> CSV File Writer "CSV Writer: OutputConnect1"
  Filename = ${Player_ScenarioDirectory}/sessions/$var{ExtractionIdx}/$var{AnalysisPath}/$var{OutputConnect1}
  Precision = 6
  Append data = false
  Only last matrix = false
Input signal=#7.Output stream 1, Input stimulations=#7.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = $var{StimulationDelay}
  Stimulation 1 = OVTK_GDF_Left
-> Time based epoching
  Epoch duration (in sec) = $var{ConnectivityLength}
  Epoch intervals (in sec) = $var{ConnectivityShift}
-> Connectivity Measure : Burg
  Metric = MagnitudeSquaredCoherence
  Connectivity Measure Length (in sec) = $var{ConnectivityLength}
  Connectivity Measure Overlap (in %) = 0
  DC removal = true
  FFT size (frequency taps) = $var{PsdSize}
  psd Method = Burg
  Auto-regressive model order = $var{AutoRegressiveOrder}
-> Matrix 3D to 2D => #28
  Selection mode = Average
  Dimension to work on = 2
Input stream=#28 -> CSV File Writer "CSV Writer: OutputConnect2"
  Filename = ${Player_ScenarioDirectory}/sessions/$var{ExtractionIdx}/$var{AnalysisPath}/$var{OutputConnect2}
  Precision = 6
  Append data = false
  Only last matrix = false
#7.Output stream 2 -> Stimulation Converter
  Keep other stimulations = true
  Stimulation range begin = OVTK_GDF_Start_Of_Trial
  Stimulation range end = OVTK_GDF_Start_Of_Trial
  Stimulation to send = OVTK_GDF_Right
-> Stimulation Filter => #31
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_GDF_Right
  Stimulation range end = OVTK_GDF_Right
Input stream=#18, Stimulations stream=#31 -> CSV File Writer "CSV - BASELINES"
  Filename = ${Player_ScenarioDirectory}/sessions/$var{ExtractionIdx}/$var{TrainingPath}/$var{OutputBaseline}
  Precision = 10
  Append data = false
  Only last matrix = false
#7.Output stream 2 -> Stimulation Filter => #33
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_GDF_Left
  Stimulation range end = OVTK_GDF_Left
Input stream=#19, Stimulations stream=#33 -> CSV File Writer "CSV - TRIALS"
  Filename = ${Player_ScenarioDirectory}/sessions/$var{ExtractionIdx}/$var{TrainingPath}/$var{OutputTrials}
  Precision = 10
  Append data = false
  Only last matrix = false
