OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Online Use
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  Keep only the sub selection of channels
  set by the user

  BCINET : DISABLED AS WE DIRECTLY USE
  CHANNEL NAMES PROVIDED BY BRAINVISION RECORDER
Comment
  Saving exp in
  EDF + ov files
Comment
  Bipolar montage viz
  (anteroposterior)
Comment
  Dummy branch
  at "Start experiment" trigger
  to init the TCP writer
Comment
  Direct Viz
Comment
  "Rest" (baseline) branch
Comment
  "MI" branch
Comment
  Direct feedback
Comment
  "Rest" (baseline) branch
Comment
  "MI" branch
Settings
  EEGDataLive = motor-imagery-live.ov
  ExtractionIdx = 1
  ClassifWeights = classifier-weights.xml
  MI_Stimulations = mi-stimulations.lua
  ChannelNames = Fp1;Fp2;F7;F3;Fz;F4;F8;FC5;FC1;FC2;FC6;T7;C3;Cz;C4;T8;FCz;CP5;CP1;CP2;CP6;Fpz;P7;P3;Pz;P4;P8;PO9;O1;Oz;O2;PO10;AF7;AF3;AF4;AF8;F5;F1;F2;F6;FT9;FT7;FC3;FC4;FT8;FT10;C5;C1;C2;C6;TP7;CP3;CPz;CP4;TP8;P5;P1;P2;P6;PO7;PO3;POz;PO4;PO8
  TimeWindowLength = 0.25
  TimeWindowShift = 0.161
  ConnectivityLength = 0.5
  ConnectivityOverlap = 50
  AutoRegressiveOrder = 19
  PsdSize = 500
  ConnectivityShift = 0.25
  StimulationEpoch = 3
  StimulationDelay = 1

0x341d3912 Generic stream reader
  Filename = C:/Users/arthur.desbois/Documents/dev/openvibeScripting/openvibe-automation/generated/Train_2_sub_01.ov

Acquisition client => #1
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#1.Signal stream -> 0x341d3912 Channel Rename
  New channel names = $var{ChannelNames}
#1.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Input stream 1=#1.Experiment information, Input stream 2=#1.Signal stream, Input stream 3=#1.Stimulations -> Identity => #4
#4.Output stream 2 -> Temporal Filter => #5
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
  Low Cut-off Frequency 2 (Hz) = 1
  High Cut-off Frequency 2 (Hz) = 40
#5.Output signal -> Channel Selector "Fp1;F3;C3;P3;O1;F7;T7;P7;Fp2;F4;C4;P4;O2;F8;T8;P8;Fz;Cz;Pz"
  Channel List = Fp1;F3;C3;P3;O1;F7;T7;P7;Fp2;F4;C4;P4;O2;F8;T8;P8;Fz;Cz;Pz
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter
  Spatial Filter Coefficients = 1; -1; 0; 0; 0; 0; 0; 0; 0; 0; 0; 0; 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0
  Number of Output Channels = 18
  Number of Input Channels = 19
  Filter matrix file =
-> Channel Rename => #8
  New channel names = Fp1-F3; Fp1-F7; F3-C3; F7-T7; C3-P3; T7-P7; P3-O1; P7-O1; Fz-Cz; Cz-Pz; Fp2-F4; Fp2-F8; F4-C4; F8-T8; C4-P4; T8-P8; P4-O2; P8-O2
Data=#8 -> Signal display "Bipolar (1-40 Hz)"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#5.Output signal 2 -> Signal display "Filtered signals (1-40Hz)"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Input stream 1=#4.Output stream 1, Input stream 2=#4.Output stream 2, Input stream 3=#4.Output stream 3 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/Test-[$core{date}-$core{time}].ov
  Use compression = false
Experiment information=#4.Output stream 1, Signal=#4.Output stream 2, Stimulations=#4.Output stream 3 -> EDF File Writer
  Filename = ${Player_ScenarioDirectory}/signals/Test-[$core{date}-$core{time}].edf
Input stream 1=#4.Output stream 2, Input stream 2=#4.Output stream 3 -> Identity => #13
Input signal=#13.Output stream 1, Input stimulations=#13.Output stream 2 -> Stimulation based epoching => #14
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = 0
  Stimulation 1 = OVTK_GDF_Start_Of_Trial
-> Time based epoching
  Epoch duration (in sec) = $var{ConnectivityLength}
  Epoch intervals (in sec) = $var{ConnectivityShift}
-> Connectivity Measure
  Metric = MagnitudeSquaredCoherence
  Connectivity Measure Length (in sec) = $var{ConnectivityLength}
  Connectivity Measure Overlap (in %) = 0
  DC removal = true
  FFT size (frequency taps) = $var{PsdSize}
  psd Method = Burg
  Auto-regressive model order = $var{AutoRegressiveOrder}
-> Matrix 3D to 2D
  Selection mode = Average
  Dimension to work on = 2
-> Identity "SPLIT CONNECT"
-> Channel Selector "Frequency Band Selector"
  Channel List = 22
  Action = Select
  Channel Matching Method = Smart
-> Matrix Transpose
-> Channel Selector
  Channel List = CP3
  Action = Select
  Channel Matching Method = Smart
-> Epoch average => #22
  Averaging type = Epoch block average
  Epoch count = 18.0
#14 -> Common Average Reference
-> Identity "SPLIT POWSPECTRUM"
-> Channel Selector
  Channel List = CP3
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching
  Epoch duration (in sec) = $var{TimeWindowLength}
  Epoch intervals (in sec) = $var{TimeWindowShift}
-> AutoRegressive Coefficients => #27
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
#27.PSD -> Matrix Transpose
-> Channel Selector "Frequency Band Selector"
  Channel List = 22
  Action = Select
  Channel Matching Method = Smart
-> Epoch average => #30
  Averaging type = Epoch block average
  Epoch count = 18.0
Input stream 1=#22, Input stream 2=#30 -> Feature aggregator => #31
Features=#31 -> Classifier processor REST => #32
  Filename to load configuration from = $var{ClassifWeights}
Input stream=#32.Probability values, Stimulations stream=#32.Labels -> CSV File Writer
  Filename = ${Player_ScenarioDirectory}/sessions/$var{ExtractionIdx}/results/Test-[$core{date}-$core{time}]-results-classif-REST.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#13.Output stream 1, Input stimulations=#13.Output stream 2 -> Stimulation based epoching => #34
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = $var{StimulationDelay}
  Stimulation 1 = OVTK_GDF_Left
-> Time based epoching
  Epoch duration (in sec) = $var{ConnectivityLength}
  Epoch intervals (in sec) = $var{ConnectivityShift}
-> Connectivity Measure
  Metric = MagnitudeSquaredCoherence
  Connectivity Measure Length (in sec) = $var{ConnectivityLength}
  Connectivity Measure Overlap (in %) = 0
  DC removal = true
  FFT size (frequency taps) = $var{PsdSize}
  psd Method = Burg
  Auto-regressive model order = $var{AutoRegressiveOrder}
-> Matrix 3D to 2D
  Selection mode = Average
  Dimension to work on = 2
-> Identity "SPLIT CONNECT"
-> Channel Selector "Frequency Band Selector"
  Channel List = 22
  Action = Select
  Channel Matching Method = Smart
-> Matrix Transpose
-> Channel Selector
  Channel List = CP3
  Action = Select
  Channel Matching Method = Smart
-> Epoch average => #42
  Averaging type = Epoch block average
  Epoch count = 18.0
#34 -> Common Average Reference
-> Identity "SPLIT POWSPECTRUM"
-> Channel Selector
  Channel List = CP3
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching
  Epoch duration (in sec) = $var{TimeWindowLength}
  Epoch intervals (in sec) = $var{TimeWindowShift}
-> AutoRegressive Coefficients => #47
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
#47.PSD -> Matrix Transpose
-> Channel Selector "Frequency Band Selector"
  Channel List = 22
  Action = Select
  Channel Matching Method = Smart
-> Epoch average => #50
  Averaging type = Epoch block average
  Epoch count = 18.0
Input stream 1=#42, Input stream 2=#50 -> Feature aggregator => #51
Features=#51 -> Classifier processor MI => #52
  Filename to load configuration from = $var{ClassifWeights}
Input stream=#52.Probability values, Stimulations stream=#52.Labels -> CSV File Writer
  Filename = ${Player_ScenarioDirectory}/sessions/$var{ExtractionIdx}/results/Test-[$core{date}-$core{time}]-results-classif-MI.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#13.Output stream 1 -> Channel Selector
  Channel List = C4
  Action = Select
  Channel Matching Method = Name
-> Time based epoching
  Epoch duration (in sec) = $var{TimeWindowLength}
  Epoch intervals (in sec) = $var{TimeWindowShift}
-> AutoRegressive Coefficients => #56
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
#56.PSD -> Frequency Band Selector NF
  Frequencies to select = 22
-> Spectrum Average => #58
  Considers zeros = false
Input signal=#4.Output stream 2, Input stimulations=#4.Output stream 3 -> Stimulation based epoching
  Epoch duration (in sec) = 0.5
  Epoch offset (in sec) = 20
  Stimulation 1 = OVTK_StimulationId_ExperimentStart
-> AutoRegressive Coefficients => #60
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
#60.PSD -> Frequency Band Selector
  Frequencies to select = 5
-> Spectrum Average => #62
  Considers zeros = false
Input stream 1=#52.Probability values, Input stream 2=#62 -> Streamed matrix multiplexer
-> TCP Writer
  Port = 5978
  Output format = Raw
Graz Motor Imagery BCI Stimulator => #65
  Lua Script = ${Player_ScenarioDirectory}/$var{MI_Stimulations}
  Number of Trials for Each Class = 18
  First Class = OVTK_GDF_Left
  Baseline Duration (in sec) = 30
  Wait For Cue Duration (in sec) = 3
  Reaction Time (in sec) = 1.0
  MI Task Duration (in sec) = 3.0
  End of Trial Minimum Duration (in sec) = 2.5
  End of Trial Maximum Duration (in sec) = 3.500
-> TCP Writer
  Port = 5698
  Output format = String
Stimulation=#65, Amplitude=#58 -> CursorInterface
  Show Instruction = true
  Show Feedback = true
  Delay feedback = false
  Show Accuracy = false
  Prediction to integrate = 5
  Positive Feedback only = false
  Fullscreen = false
  Mode of Display = 3
  Mode of Classification = 1
  Display Score = false
