OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Data Acquisition
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  Saving exp in
  EDF/GDF + ov files
Comment
  Stop scenario when reaching
  "Experiment Stop"
Comment
  Monopolar montage
Comment
  ECG and EMGs display
Comment
  Bipolar montage viz
  (anteroposterior)
Settings
  EEGData = rsEEG-[$core{date}-$core{time}]
  SignalsDirectory = signals
  AuxChannels = ECG;FDI_ah;APB_ah;ADM_ah;ECD_ah;FDI_uh;APB_uh;ECD_uh

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal stream, Input stream 3=#0.Stimulations -> Identity => #1
Experiment information=#1.Output stream 1, Signal=#1.Output stream 2, Stimulation=#1.Output stream 3 -> GDF file writer
  Filename = ${Player_ScenarioDirectory}/$var{SignalsDirectory}/$var{EEGData}.gdf
Input stream 1=#1.Output stream 1, Input stream 2=#1.Output stream 2, Input stream 3=#1.Output stream 3 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/$var{SignalsDirectory}/$var{EEGData}.ov
  Use compression = false
#1.Output stream 3 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Lua Stimulator
  Lua Script = ${Player_ScenarioDirectory}/rsEEG.lua
  Duration (s) = 60
-> Display cue image => #6
  Display images in full screen = false
  Scale images to fit = false
  Clear screen Stimulation = OVTK_GDF_Foot
  Cue Image 1 = D:/Manip/BCINET/Backup/Images/intercue-center .png
  Stimulation 1 = OVTK_StimulationId_BaselineStart
  Cue Image 2 = D:/Manip/BCINET/Backup/Images/intercue-center .png
  Stimulation 2 = OVTK_StimulationId_BaselineStop
Input stream 1=#1.Output stream 2, Input stream 2=#6 -> Identity => #7
#7.Output stream 1 -> Channel Selector "AUX"
  Channel List = $var{AuxChannels}
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "Notch"
  Filter Type = Band Stop
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 48
  High Cut-off Frequency (Hz) = 52
-> Temporal filter "Notch"
  Filter Type = Band Stop
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 98
  High Cut-off Frequency (Hz) = 102
-> Temporal filter "Notch"
  Filter Type = Band Stop
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 148
  High Cut-off Frequency (Hz) = 152
-> Temporal filter "Notch"
  Filter Type = Band Stop
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 198
  High Cut-off Frequency (Hz) = 202
-> Temporal Filter => #13
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 10
  High Cut-off Frequency (Hz) = 250
Data=#13, Stimulations=#7.Output stream 2 -> Signal display "ECG/EMG Signals"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#7.Output stream 1 -> Temporal Filter => #15
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
  Low Cut-off Frequency 2 (Hz) = 1
  High Cut-off Frequency 2 (Hz) = 40
Data=#15.Output signal 2, Stimulations=#7.Output stream 2 -> Signal display "Filtered signals (1-40Hz)"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 30
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = true
#15.Output signal -> Channel Selector "19 electrodes"
  Channel List = Fp1;F3;C3;P3;O1;F7;T7;P7;Fp2;F4;C4;P4;O2;F8;T8;P8;Fz;Cz;Pz
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter
  Spatial Filter Coefficients = 1; -1; 0; 0; 0; 0; 0; 0; 0; 0; 0; 0; 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0
  Number of Output Channels = 18
  Number of Input Channels = 19
  Filter matrix file =
-> Channel Rename => #19
  New channel names = Fp1-F3; Fp1-F7; F3-C3; F7-T7; C3-P3; T7-P7; P3-O1; P7-O1; Fz-Cz; Cz-Pz; Fp2-F4; Fp2-F8; F4-C4; F8-T8; C4-P4; T8-P8; P4-O2; P8-O2
Data=#19, Stimulations=#7.Output stream 2 -> Signal display "Bipolar (1-40 Hz)"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 30
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
