OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Data Acquisition
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  Stimulation Generation
  + Instructions display (arrows, crosses...)
Comment
  Filter out the "Incrorect" and "Correct" stimulations
  When using BrainVision Recorder + OpenViBE's Acq server, with drift correction enabled,
  we get flooded with "incorrect / correct" stims (generated when drift is detected)
  This makes our stimulations disappear!
Comment
  Clear at "End_Of_Trial"
Comment
  Saving exp in
  EDF/GDF + ov files
Comment
  EDF deprecated with LSL acq
Comment
  TCP 5698
  Update events to relay
Comment
  Stop scenario when reaching
  "Experiment Stop"
Comment
  Monopolar montage
Comment
  ECG and EMGs display
Comment
  Writing metadata in CSV file
  (used for getting sampling frequency, list of electrodes...)
Comment
  Bipolar montage viz
  (anteroposterior)
Settings
  EEGData = MI-[$core{date}-$core{time}].ov
  EEGMetaData = MI-[$core{date}-$core{time}]-META.csv
  MI_Stimulations = mi-stimulations.lua
  SignalsDirectory = signals

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Stimulations -> 0x341d3912 Stimulation Filter
  Default action = Select
  Time range begin = 0
  Time range end = 0
  Action to perform = Reject
  Stimulation range begin = OVTK_GDF_Correct
  Stimulation range end = OVTK_GDF_Correct
-> 0x341d3912 Stimulation Filter
  Default action = Select
  Time range begin = 0
  Time range end = 0
  Action to perform = Reject
  Stimulation range begin = OVTK_GDF_Incorrect
  Stimulation range end = OVTK_GDF_Incorrect
#0.Signal stream -> 0x341d3912 Channel Rename
  New channel names = Fp1;Fz;F3;F7;FT9;FC5;FC1;C3;T7;FCz;CP5;CP1;Pz;P3;P7;O1;Oz;O2;P4;P8;Fpz;CP6;CP2;Cz;C4;T8;FT10;FC6;FC2;F4;F8;Fp2;AF7;AF3;AFz;F1;F5;FT7;FC3;C1;C5;TP7;CP3;P1;P5;PO7;PO3;POz;PO4;PO8;P6;P2;CPz;CP4;TP8;C6;C2;FC4;FT8;F6;AF8;AF4;F2;Iz;ECG;EMG1_G;EMG2_D;NC68;NC69;NC70;NC71;NC72;triggerStream
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal stream, Input stream 3=#0.Stimulations -> Identity => #4
#4.Output stream 3 -> 0x341d3912 RelayOV2Fesia
  Stimulation 1 = OVTK_StimulationId_ExperimentStart
  Command 1 = START "" "C:/openvibe-sender/source/repos/BCINET_Relay/Release/ConsoleApplication1.exe"
Experiment information=#4.Output stream 1, Signal=#4.Output stream 2, Stimulations=#4.Output stream 3 -> 0x341d3912 EDF File Writer
  Filename = ${Player_ScenarioDirectory}/signals/Test-[$core{date}-$core{time}].edf
#4.Output stream 3 -> TCP Writer
  Port = 5698
  Output format = String
Experiment information=#4.Output stream 1, Signal=#4.Output stream 2, Stimulation=#4.Output stream 3 -> GDF file writer
  Filename = ${Player_ScenarioDirectory}/signals/MI-[$core{date}-$core{time}].gdf
Input stream 1=#4.Output stream 1, Input stream 2=#4.Output stream 2, Input stream 3=#4.Output stream 3 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/$var{SignalsDirectory}/$var{EEGData}
  Use compression = false
#4.Output stream 3 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Input signal=#4.Output stream 2, Input stimulations=#4.Output stream 3 -> Stimulation based epoching => #11
  Epoch duration (in sec) = 0.1
  Epoch offset (in sec) = 0
  Stimulation 1 = OVTK_StimulationId_ExperimentStart
Input stream=#11, Stimulations stream=#4.Output stream 3 -> CSV File Writer
  Filename = ${Player_ScenarioDirectory}/$var{SignalsDirectory}/$var{EEGMetaData}
  Precision = 10
  Append data = false
  Only last matrix = false
Graz Motor Imagery BCI Stimulator
  Lua Script = ${Player_ScenarioDirectory}/$var{MI_Stimulations}
  Number of Trials for Each Class = 18
  First Class = OVTK_GDF_Left
  Baseline Duration (in sec) = 30
  Wait For Cue Duration (in sec) = 3
  Reaction Time (in sec) = 1.0
  MI Task Duration (in sec) = 3.0
  End of Trial Minimum Duration (in sec) = 2.5
  End of Trial Maximum Duration (in sec) = 3.500
-> Display cue image => #14
  Display images in full screen = false
  Scale images to fit = false
  Clear screen Stimulation = OVTK_GDF_Foot
  Cue Image 1 = D:/manip/BCINET/Backup/Images/cross-center.png
  Stimulation 1 = OVTK_StimulationId_ExperimentStart
  Cue Image 2 = D:/Manip/BCINET/Backup/Images/cue-center-Big.png
  Stimulation 2 = OVTK_GDF_Left
  Cue Image 3 = D:/Manip/BCINET/Backup/Images/intercue-center .png
  Stimulation 3 = OVTK_GDF_Start_Of_Trial
  Cue Image 4 = D:/Manip/BCINET/Backup/Images/intercue-center .png
  Stimulation 4 = OVTK_GDF_End_Of_Trial
Input stream 1=#4.Output stream 2, Input stream 2=#14 -> Identity => #15
#15.Output stream 1 -> Temporal Filter => #16
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
  Low Cut-off Frequency 2 (Hz) = 1
  High Cut-off Frequency 2 (Hz) = 40
Data=#16.Output signal 2, Stimulations=#15.Output stream 2 -> Signal display "Filtered signals (1-40Hz)"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = true
#16.Output signal -> Channel Selector "19 electrodes"
  Channel List = Fp1;F3;C3;P3;O1;F7;T7;P7;Fp2;F4;C4;P4;O2;F8;T8;P8;Fz;Cz;Pz
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter
  Spatial Filter Coefficients = 1; -1; 0; 0; 0; 0; 0; 0; 0; 0; 0; 0; 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0
  Number of Output Channels = 18
  Number of Input Channels = 19
  Filter matrix file =
-> Channel Rename => #20
  New channel names = Fp1-F3; Fp1-F7; F3-C3; F7-T7; C3-P3; T7-P7; P3-O1; P7-O1; Fz-Cz; Cz-Pz; Fp2-F4; Fp2-F8; F4-C4; F8-T8; C4-P4; T8-P8; P4-O2; P8-O2
Data=#20, Stimulations=#15.Output stream 2 -> Signal display "Bipolar (1-40 Hz)"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#15.Output stream 1 -> Channel Selector "AUX selection" => #22
  Channel List = ECG;EMG1_G;EMG2_D
  Action = Select
  Channel Matching Method = Smart
Data=#22, Stimulations=#15.Output stream 2 -> Signal display "ECG/EMG Signals"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
