OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)
Comment
  - CSV file containing the signal from StimDelay, with duration StimEpoch (for recombination before training)
  - CSV file containing the spectrum of the signal from StimDelay, duration StimEpoch (for analysis)
  - CSV file containing the spectrum of the signal from [-StimEpoch], duration StimEpoch ("baseline")
Comment
  Keep only the sub selection of channels
  set by the user

  BCINET : DISABLED AS WE DIRECTLY USE
  CHANNEL NAMES PROVIDED BY BRAINVISION RECORDER
Comment
  Select 64 electrodes
  exclude AUX electrodes
Comment
  Reject electrodes FT9, FT10 and Iz
Comment
  Notch filter to
  remove line 50hz
  & harmonics
Comment
  Here the MI trials start at the "Feedback Continuous" stim.
  And Rest trials start at the "Start of Trial" stims.

  (important for the traiing scenario:
  double check that the stim IDs used in
  "stimulation epoching" boxes are matching)
Comment
  Connectivity output :
  frequencies x channels x channels
  (ex: 500 x 64 x 64)

  Matrix 3D to 2D : average over last "channel" dimension :
  frequencies x channels
  (ex: 500 x 64)
Comment
  TRIALS SIGNALS
  Rest = Right (from "Start of Trial")
  MI = Left (from "Feedback Continuous")
Comment
  TRIALS SPECTRUM
Comment
  REST SPECTRUM
Comment
  TRIALS Connect
Comment
  REST Connect
Comment
  TRIALS Node Strength
  (computed from averaging the connectivity
   matrix across a "channel" dimension)
Settings
  EEGData = motor-imagery.ov
  ExtractionIdx = 1
  SignalsPath = signals
  AnalysisPath = extract
  TrainingPath = train
  OutputTrials = motor-imagery-TRIALS.csv
  OutputBaseline = motor-imagery-BASELINE.csv
  OutputSpect1 = motor-imagery-SPECTRUM-RIGHT.csv
  OutputSpect2 = motor-imagery-SPECTRUM-LEFT.csv
  OutputConnect1 = motor-imagery-CONNECTIVITY-RIGHT.csv
  OutputConnect2 = motor-imagery-CONNECTIVITY-LEFT.csv
  ChannelNames = Fp1;Fz;F3;F7;FT9;FC5;FC1;C3;T7;FCz;CP5;CP1;Pz;P3;P7;O1;Oz;O2;P4;P8;Fpz;CP6;CP2;Cz;C4;T8;FT10;FC6;FC2;F4;F8;Fp2;AF7;AF3;AFz;F1;F5;FT7;FC3;C1;C5;TP7;CP3;P1;P5;PO7;PO3;POz;PO4;PO8;P6;P2;CPz;CP4;TP8;C6;C2;FC4;FT8;F6;AF8;AF4;F2;Iz
  ChannelSubset =
  StimulationEpoch = 1.5
  StimulationDelay = 0
  TimeWindowLength = 0.25
  TimeWindowShift = 0.161
  AutoRegressiveOrder = 15
  ConnectivityLength = 0.5
  ConnectivityOverlap = 0.0
  ConnectivityShift = 0.25
  PsdSize = 256

0x341d3912 Generic stream reader
  Filename = C:/Users/arthur.desbois/Documents/dev/openvibeScripting/openvibe-automation/generated/signals/Train-[2022.03.15-15.43.22].ov

Generic stream reader => #1
  Filename = ${Player_ScenarioDirectory}/$var{SignalsPath}/$var{EEGData}
#1.Output stream 2 -> 0x341d3912 Channel Rename
  New channel names = $var{ChannelNames}
#1.Output stream 2 -> Channel Selector "64 electrodes"
  Channel List = Fp1;Fz;F3;F7;FT9;FC5;FC1;C3;T7;FCz;CP5;CP1;Pz;P3;P7;O1;Oz;O2;P4;P8;Fpz;CP6;CP2;Cz;C4;T8;FT10;FC6;FC2;F4;F8;Fp2;AF7;AF3;AFz;F1;F5;FT7;FC3;C1;C5;TP7;CP3;P1;P5;PO7;PO3;POz;PO4;PO8;P6;P2;CPz;CP4;TP8;C6;C2;FC4;FT8;F6;AF8;AF4;F2;Iz
  Action = Select
  Channel Matching Method = Smart
-> Channel Selector "Reject"
  Channel List = FT10;FT9;Iz
  Action = Reject
  Channel Matching Method = Smart
-> Temporal filter "Notch"
  Filter Type = Band Stop
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 48
  High Cut-off Frequency (Hz) = 52
-> Temporal filter "Notch"
  Filter Type = Band Stop
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 98
  High Cut-off Frequency (Hz) = 102
-> Temporal filter "Notch"
  Filter Type = Band Stop
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 148
  High Cut-off Frequency (Hz) = 152
-> Temporal filter "Notch" => #8
  Filter Type = Band Stop
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 198
  High Cut-off Frequency (Hz) = 202
Input stream 1=#8, Input stream 2=#1.Output stream 3 -> Identity => #9
#9.Output stream 1 -> Common Average Reference => #10
Input stream 1=#10, Input stream 2=#9.Output stream 2 -> Identity => #11
Input signal=#11.Output stream 1, Input stimulations=#11.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = 0
  Stimulation 1 = OVTK_GDF_Feedback_Continuous
-> Time based epoching
  Epoch duration (in sec) = $var{ConnectivityLength}
  Epoch intervals (in sec) = $var{ConnectivityShift}
-> Connectivity Measure : Burg
  Channel subselection =
  Metric = AbsImaginaryCoherence
  Connectivity Measure Length (in sec) = $var{ConnectivityLength}
  Connectivity Measure Overlap (in %) = 0
  DC removal = true
  FFT size (frequency taps) = $var{PsdSize}
  psd Method = Burg
  Auto-regressive model order = $var{AutoRegressiveOrder}
-> Matrix 3D to 2D => #15
  Selection mode = Average
  Dimension to work on = 1
Input stream=#15 -> CSV File Writer "CSV Writer: OutputConnect1"
  Filename = ${Player_ScenarioDirectory}/sessions/$var{ExtractionIdx}/$var{AnalysisPath}/$var{OutputConnect1}
  Precision = 6
  Append data = false
  Only last matrix = false
Input signal=#11.Output stream 1, Input stimulations=#11.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = 0
  Stimulation 1 = OVTK_GDF_Start_Of_Trial
-> Time based epoching
  Epoch duration (in sec) = $var{ConnectivityLength}
  Epoch intervals (in sec) = $var{ConnectivityShift}
-> Connectivity Measure : Burg
  Channel subselection =
  Metric = AbsImaginaryCoherence
  Connectivity Measure Length (in sec) = $var{ConnectivityLength}
  Connectivity Measure Overlap (in %) = 0
  DC removal = true
  FFT size (frequency taps) = $var{PsdSize}
  psd Method = Burg
  Auto-regressive model order = $var{AutoRegressiveOrder}
-> Matrix 3D to 2D => #20
  Selection mode = Average
  Dimension to work on = 1
Input stream=#20 -> CSV File Writer "CSV Writer: OutputConnect2"
  Filename = ${Player_ScenarioDirectory}/sessions/$var{ExtractionIdx}/$var{AnalysisPath}/$var{OutputConnect2}
  Precision = 6
  Append data = false
  Only last matrix = false
#9.Output stream 1 -> Common Average Reference => #22
Input stream 1=#22, Input stream 2=#9.Output stream 2 -> Identity => #23
Input signal=#23.Output stream 1, Input stimulations=#23.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = 0
  Stimulation 1 = OVTK_GDF_Feedback_Continuous
-> Time based epoching
  Epoch duration (in sec) = $var{TimeWindowLength}
  Epoch intervals (in sec) = $var{TimeWindowShift}
-> AutoRegressive Coefficients => #26
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
Input stream=#26.PSD -> CSV File Writer "CSV Writer: OutputSpect1"
  Filename = ${Player_ScenarioDirectory}/sessions/$var{ExtractionIdx}/$var{AnalysisPath}/$var{OutputSpect1}
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#23.Output stream 1, Input stimulations=#23.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = 0
  Stimulation 1 = OVTK_GDF_Start_Of_Trial
-> Time based epoching
  Epoch duration (in sec) = $var{TimeWindowLength}
  Epoch intervals (in sec) = $var{TimeWindowShift}
-> AutoRegressive Coefficients => #30
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
Input stream=#30.PSD -> CSV File Writer "CSV Writer: OutputSpect2"
  Filename = ${Player_ScenarioDirectory}/sessions/$var{ExtractionIdx}/$var{AnalysisPath}/$var{OutputSpect2}
  Precision = 10
  Append data = false
  Only last matrix = false
#9.Output stream 2 -> Stimulation Filter
  Default action = Select
  Time range begin = 0
  Time range end = 0
  Action to perform = Reject
  Stimulation range begin = OVTK_GDF_Left
  Stimulation range end = OVTK_GDF_Left
-> Stimulation Converter
  Keep other stimulations = true
  Stimulation range begin = OVTK_GDF_Feedback_Continuous
  Stimulation range end = OVTK_GDF_Feedback_Continuous
  Stimulation to send = OVTK_GDF_Left
-> Stimulation Converter => #34
  Keep other stimulations = true
  Stimulation range begin = OVTK_GDF_Start_Of_Trial
  Stimulation range end = OVTK_GDF_Start_Of_Trial
  Stimulation to send = OVTK_GDF_Right
Input signal=#9.Output stream 1, Input stimulations=#34 -> Stimulation based epoching => #35
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = 0
  Stimulation 1 = OVTK_GDF_Left
  Stimulation 2 = OVTK_GDF_Right
#34 -> Stimulation Filter => #36
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_GDF_Left
  Stimulation range end = OVTK_GDF_Right
Input stream=#35, Stimulations stream=#36 -> CSV File Writer "CSV - TRIALS"
  Filename = ${Player_ScenarioDirectory}/sessions/$var{ExtractionIdx}/$var{TrainingPath}/$var{OutputTrials}
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#9.Output stream 1, Input stimulations=#9.Output stream 2 -> 0x341d3912 Stimulation based epoching => #38
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = 0
  Stimulation 1 = OVTK_GDF_Start_Of_Trial
#9.Output stream 2 -> 0x341d3912 Stimulation Converter => #39
  Keep other stimulations = false
  Stimulation range begin = OVTK_GDF_Start_Of_Trial
  Stimulation range end = OVTK_GDF_Start_Of_Trial
  Stimulation to send = OVTK_GDF_Right
Input stream=#38, Stimulations stream=#39 -> 0x341d3912 CSV File Writer "CSV - BASELINES"
  Filename = ${Player_ScenarioDirectory}/sessions/$var{ExtractionIdx}/$var{TrainingPath}/$var{OutputBaseline}
  Precision = 10
  Append data = false
  Only last matrix = false
#1.Output stream 2 -> Timeout
  Timeout delay = 5
  Output Stimulation = OVTK_StimulationId_ExperimentStop
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#1.Output stream 3 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
