OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)
Comment
  Keep only the sub selection of channels
  set by the user

  BCINET : DISABLED AS WE DIRECTLY USE
  CHANNEL NAMES PROVIDED BY BRAINVISION RECORDER
Comment
  For debug purposes...
Comment
  Measure connectivity for selected channels...
  ... average over one of the "channel" dimensions => node strength
  ... filter to frequencies of interest, and average over those
Comment
  Here, the stims used for MI trials are "Feedback Continuous",
  and for Rest it's "Start of Trial".

  But the Classifier Trainer's labels are still "Left" (MI) and "Right" (Rest)
Comment
  Reject electrodes FT9, FT10 and Iz for connectivity computation
Comment
  Run the classifier trainer,
  stop the scenario when training is over
Settings
  EEGData = Test-[2022.05.05-15.36.18]-TRAINCOMPOSITE.csv
  ExtractionIdx = 1
  SignalsPath = signals
  TrainingPath = train
  OutputWeights = classifier-weights.xml
  ChannelNames = Fp1;Fz;F3;F7;FT9;FC5;FC1;C3;T7;FCz;CP5;CP1;Pz;P3;P7;O1;Oz;O2;P4;P8;Fpz;CP6;CP2;Cz;C4;T8;FT10;FC6;FC2;F4;F8;Fp2;AF7;AF3;AFz;F1;F5;FT7;FC3;C1;C5;TP7;CP3;P1;P5;PO7;PO3;POz;PO4;PO8;P6;P2;CPz;CP4;TP8;C6;C2;FC4;FT8;F6;AF8;AF4;F2;Iz
  StimulationEpoch = 3
  StimulationDelay = 3
  TimeWindowLength = 0.25
  TimeWindowShift = 0.161
  ConnectivityLength = 0.25
  ConnectivityOverlap = 36
  ConnectivityShift = 0.16
  AutoRegressiveOrder = 19
  PsdSize = 500

CSV File Reader => #0
  Filename = ${Player_ScenarioDirectory}/sessions/$var{ExtractionIdx}/$var{TrainingPath}/$var{EEGData}
#0.Output stream -> 0x341d3912 Channel Rename
  New channel names = $var{ChannelNames}
#0.Output stimulation -> 0x341d3912 Stimulation listener
  Log level to use = Information
Data=#0.Output stream, Stimulations=#0.Output stimulation -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input stream 1=#0.Output stream, Input stream 2=#0.Output stimulation -> Identity => #4
Input signal=#4.Output stream 1, Input stimulations=#4.Output stream 2 -> Stimulation based epoching => #5
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = 0
  Stimulation 1 = OVTK_GDF_Left
-> Channel Selector "Reject"
  Channel List = FT10;FT9;Iz
  Action = Reject
  Channel Matching Method = Smart
-> Time based epoching
  Epoch duration (in sec) = $var{ConnectivityLength}
  Epoch intervals (in sec) = $var{ConnectivityShift}
-> Identity "SPLIT CONNECT"
-> Connectivity Measure
  Channel subselection = A
  Metric = AbsImaginaryCoherence
  Connectivity Measure Length (in sec) = $var{ConnectivityLength}
  Connectivity Measure Overlap (in %) = 0
  DC removal = true
  FFT size (frequency taps) = $var{PsdSize}
  psd Method = Burg
  Auto-regressive model order = $var{AutoRegressiveOrder}
-> Matrix 3D to 2D
  Selection mode = Average
  Dimension to work on = 1
-> Channel Selector "Frequency Band Selector"
  Channel List = 22
  Action = Select
  Channel Matching Method = Smart
-> Matrix Transpose
-> Channel Selector
  Channel List = CP3
  Action = Select
  Channel Matching Method = Smart
-> Epoch average => #14
  Averaging type = Epoch block average
  Epoch count = 18.0
#5 -> Common Average Reference
-> Identity "SPLIT POWSPECTRUM"
-> Channel Selector
  Channel List = CP3
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching
  Epoch duration (in sec) = $var{TimeWindowLength}
  Epoch intervals (in sec) = $var{TimeWindowShift}
-> AutoRegressive Coefficients => #19
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
#19.PSD -> Matrix Transpose
-> Channel Selector "Frequency Band Selector"
  Channel List = 22
  Action = Select
  Channel Matching Method = Smart
-> Epoch average => #22
  Averaging type = Epoch block average
  Epoch count = 18.0
Input stream 1=#14, Input stream 2=#22 -> Feature aggregator => #23
Input signal=#4.Output stream 1, Input stimulations=#4.Output stream 2 -> Stimulation based epoching => #24
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = 0
  Stimulation 1 = OVTK_GDF_Right
-> Channel Selector "Reject"
  Channel List = FT10;FT9;Iz
  Action = Reject
  Channel Matching Method = Smart
-> Time based epoching
  Epoch duration (in sec) = $var{ConnectivityLength}
  Epoch intervals (in sec) = $var{ConnectivityShift}
-> Identity "SPLIT CONNECT"
-> Connectivity Measure
  Channel subselection = A
  Metric = AbsImaginaryCoherence
  Connectivity Measure Length (in sec) = $var{ConnectivityLength}
  Connectivity Measure Overlap (in %) = 0
  DC removal = true
  FFT size (frequency taps) = $var{PsdSize}
  psd Method = Burg
  Auto-regressive model order = $var{AutoRegressiveOrder}
-> Matrix 3D to 2D
  Selection mode = Average
  Dimension to work on = 1
-> Channel Selector "Frequency Band Selector"
  Channel List = 22
  Action = Select
  Channel Matching Method = Smart
-> Matrix Transpose
-> Channel Selector
  Channel List = CP3
  Action = Select
  Channel Matching Method = Smart
-> Epoch average => #33
  Averaging type = Epoch block average
  Epoch count = 18.0
#24 -> Common Average Reference
-> Identity "SPLIT POWSPECTRUM"
-> Channel Selector
  Channel List = CP3
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching
  Epoch duration (in sec) = $var{TimeWindowLength}
  Epoch intervals (in sec) = $var{TimeWindowShift}
-> AutoRegressive Coefficients => #38
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
#38.PSD -> Matrix Transpose
-> Channel Selector "Frequency Band Selector"
  Channel List = 22
  Action = Select
  Channel Matching Method = Smart
-> Epoch average => #41
  Averaging type = Epoch block average
  Epoch count = 18.0
Input stream 1=#33, Input stream 2=#41 -> Feature aggregator => #42
Stimulations=#4.Output stream 2, Features for class 1=#23, Features for class 2=#42 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = ${Player_ScenarioDirectory}/sessions/$var{ExtractionIdx}/$var{TrainingPath}/$var{OutputWeights}
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_GDF_Left
  Class 2 label = OVTK_GDF_Right
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Number of partitions for k-fold cross-validation test = 10
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Randomize k-fold cross-validation test data = true
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop

0x341d3912 Generic stream reader
  Filename = C:/Users/arthur.desbois/Documents/dev/openvibeScripting/openvibe-automation/generated/signals/motor-imagery.ov

0x341d3912 Generic stream reader
  Filename = ${Player_ScenarioDirectory}/$var{EEGData}

0x341d3912 CSV File Reader
  Filename = C:/Users/arthur.desbois/Documents/dev/openvibeScripting/openvibe-automation/generated/signals/training/Train-[2022.03.15-15.33.38]-TRIALS.csv
