OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Online Use
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  Visualization
  Direct feedback
Comment
  Select 64 electrodes
  exclude AUX electrodes
Comment
  Clear at "GTVK_OVDF_End_Of_Trial"
Comment
  Saving exp in
  EDF + ov files
Comment
  Stop scenario when reaching
  "Experiment Stop"
Comment
  Reject electrodes FT9, FT10 and Iz
Comment
  TCP 5698
  Update events to relay
Comment
  Notch filter to
  remove line 50hz
  & harmonics
Comment
  Monopolar montage
Comment
  ECG and EMGs display
Comment
  "Rest" (baseline) branch
Comment
  "MI" branch
Comment
  Bipolar montage viz
  (anteroposterior)
Comment
  Result sent to OpenFesiaGUI
  TCP 4978 (Rest)
  TCP 5978 (MI)
Comment
  String results
Comment
  "Rest" (baseline) branch
Comment
  "MI" branch
Comment
  Probability results
Settings
  EEGDataLive = motor-imagery-live.ov
  ExtractionIdx = 1
  ClassifWeights = classifier-weights.xml
  MI_Stimulations = mi-stimulations.lua
  ChannelNames = Fp1;Fz;F3;F7;FT9;FC5;FC1;C3;T7;FCz;CP5;CP1;Pz;P3;P7;O1;Oz;O2;P4;P8;Fpz;CP6;CP2;Cz;C4;T8;FT10;FC6;FC2;F4;F8;Fp2;AF7;AF3;AFz;F1;F5;FT7;FC3;C1;C5;TP7;CP3;P1;P5;PO7;PO3;POz;PO4;PO8;P6;P2;CPz;CP4;TP8;C6;C2;FC4;FT8;F6;AF8;AF4;F2;Iz
  TimeWindowLength = 0.25
  TimeWindowShift = 0.161
  ConnectivityLength = 0.5
  ConnectivityOverlap = 50
  AutoRegressiveOrder = 19
  PsdSize = 500
  ConnectivityShift = 0.25
  StimulationEpoch = 3
  StimulationDelay = 1
  RejectChannels = FT10;FT9;Iz
  AuxChannels = ECG;FDI_ah;APB_ah;ADM_ah;ECD_ah;FDI_uh;APB_uh;ECD_uh

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal stream, Input stream 3=#0.Stimulations -> Identity => #1
#1.Output stream 2 -> Channel Selector "64 EEG"
  Channel List = Fp1;Fz;F3;F7;FT9;FC5;FC1;C3;T7;FCz;CP5;CP1;Pz;P3;P7;O1;Oz;O2;P4;P8;Fpz;CP6;CP2;Cz;C4;T8;FT10;FC6;FC2;F4;F8;Fp2;AF7;AF3;AFz;F1;F5;FT7;FC3;C1;C5;TP7;CP3;P1;P5;PO7;PO3;POz;PO4;PO8;P6;P2;CPz;CP4;TP8;C6;C2;FC4;FT8;F6;AF8;AF4;F2;Iz
  Action = Select
  Channel Matching Method = Smart
-> Channel Selector "Reject"
  Channel List = $var{RejectChannels}
  Action = Reject
  Channel Matching Method = Smart
-> Temporal filter "Notch"
  Filter Type = Band Stop
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 48
  High Cut-off Frequency (Hz) = 52
-> Temporal filter "Notch"
  Filter Type = Band Stop
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 98
  High Cut-off Frequency (Hz) = 102
-> Temporal filter "Notch"
  Filter Type = Band Stop
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 148
  High Cut-off Frequency (Hz) = 152
-> Temporal filter "Notch" => #7
  Filter Type = Band Stop
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 198
  High Cut-off Frequency (Hz) = 202
Input stream 1=#7, Input stream 2=#1.Output stream 3 -> Identity => #8
Input signal=#8.Output stream 1, Input stimulations=#8.Output stream 2 -> Stimulation based epoching => #9
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = 0
  Stimulation 1 = OVTK_GDF_Start_Of_Trial
-> Time based epoching
  Epoch duration (in sec) = $var{ConnectivityLength}
  Epoch intervals (in sec) = $var{ConnectivityShift}
-> Identity "SPLIT CONNECT"
-> Connectivity Measure
  Channel subselection = A
  Metric = AbsImaginaryCoherence
  Connectivity Measure Length (in sec) = $var{ConnectivityLength}
  Connectivity Measure Overlap (in %) = 0
  DC removal = true
  FFT size (frequency taps) = $var{PsdSize}
  psd Method = Burg
  Auto-regressive model order = $var{AutoRegressiveOrder}
-> Matrix 3D to 2D
  Selection mode = Average
  Dimension to work on = 1
-> Channel Selector "Frequency Band Selector"
  Channel List = 22
  Action = Select
  Channel Matching Method = Smart
-> Matrix Transpose
-> Channel Selector
  Channel List = CP3
  Action = Select
  Channel Matching Method = Smart
-> Epoch average => #17
  Averaging type = Epoch block average
  Epoch count = 18.0
#9 -> Common Average Reference
-> Identity "SPLIT POWSPECTRUM"
-> Channel Selector
  Channel List = CP3
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching
  Epoch duration (in sec) = $var{TimeWindowLength}
  Epoch intervals (in sec) = $var{TimeWindowShift}
-> AutoRegressive Coefficients => #22
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
#22.PSD -> Matrix Transpose
-> Channel Selector "Frequency Band Selector"
  Channel List = 22
  Action = Select
  Channel Matching Method = Smart
-> Epoch average => #25
  Averaging type = Epoch block average
  Epoch count = 18.0
Input stream 1=#17, Input stream 2=#25 -> Feature aggregator => #26
Features=#26 -> Classifier processor REST => #27
  Filename to load configuration from = $var{ClassifWeights}
Input stream=#27.Probability values, Stimulations stream=#27.Labels -> CSV File Writer
  Filename = ${Player_ScenarioDirectory}/sessions/$var{ExtractionIdx}/results/Test-[$core{date}-$core{time}]-results-classif-REST.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#27.Labels -> 0x341d3912 TCP Writer
  Port = 4978
  Output format = String
#27.Probability values -> TCP Writer
  Port = 4978
  Output format = Raw
Input signal=#8.Output stream 1, Input stimulations=#8.Output stream 2 -> Stimulation based epoching => #31
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = 0
  Stimulation 1 = OVTK_GDF_Feedback_Continuous
-> Time based epoching
  Epoch duration (in sec) = $var{ConnectivityLength}
  Epoch intervals (in sec) = $var{ConnectivityShift}
-> Identity "SPLIT CONNECT"
-> Connectivity Measure
  Channel subselection = A
  Metric = AbsImaginaryCoherence
  Connectivity Measure Length (in sec) = $var{ConnectivityLength}
  Connectivity Measure Overlap (in %) = 0
  DC removal = true
  FFT size (frequency taps) = $var{PsdSize}
  psd Method = Burg
  Auto-regressive model order = $var{AutoRegressiveOrder}
-> Matrix 3D to 2D
  Selection mode = Average
  Dimension to work on = 1
-> Channel Selector "Frequency Band Selector"
  Channel List = 22
  Action = Select
  Channel Matching Method = Smart
-> Matrix Transpose
-> Channel Selector
  Channel List = CP3
  Action = Select
  Channel Matching Method = Smart
-> Epoch average => #39
  Averaging type = Epoch block average
  Epoch count = 18.0
#31 -> Common Average Reference
-> Identity "SPLIT POWSPECTRUM"
-> Channel Selector
  Channel List = CP3
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching
  Epoch duration (in sec) = $var{TimeWindowLength}
  Epoch intervals (in sec) = $var{TimeWindowShift}
-> AutoRegressive Coefficients => #44
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
#44.PSD -> Matrix Transpose
-> Channel Selector "Frequency Band Selector"
  Channel List = 22
  Action = Select
  Channel Matching Method = Smart
-> Epoch average => #47
  Averaging type = Epoch block average
  Epoch count = 18.0
Input stream 1=#39, Input stream 2=#47 -> Feature aggregator => #48
Features=#48 -> Classifier processor MI => #49
  Filename to load configuration from = $var{ClassifWeights}
#49.Labels -> 0x341d3912 TCP Writer
  Port = 5978
  Output format = String
Input stream=#49.Probability values, Stimulations stream=#49.Labels -> CSV File Writer
  Filename = ${Player_ScenarioDirectory}/sessions/$var{ExtractionIdx}/results/Test-[$core{date}-$core{time}]-results-classif-MI.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#49.Probability values -> TCP Writer
  Port = 5978
  Output format = Raw
Experiment information=#1.Output stream 1, Signal=#1.Output stream 2, Stimulation=#1.Output stream 3 -> GDF file writer
  Filename = ${Player_ScenarioDirectory}/signals/Test-[$core{date}-$core{time}].gdf
Input stream 1=#1.Output stream 1, Input stream 2=#1.Output stream 2, Input stream 3=#1.Output stream 3 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/Test-[$core{date}-$core{time}].ov
  Use compression = false
#1.Output stream 3 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#1.Output stream 3 -> TCP Writer
  Port = 5698
  Output format = String
Graz Motor Imagery BCI Stimulator
  Lua Script = ${Player_ScenarioDirectory}/$var{MI_Stimulations}
  Number of Trials for Each Class = 18
  First Class = OVTK_GDF_Left
  Baseline Duration (in sec) = 30
  Wait For Cue Duration (in sec) = 3
  Reaction Time (in sec) = 1.0
  MI Task Duration (in sec) = 3.0
  End of Trial Minimum Duration (in sec) = 2.5
  End of Trial Maximum Duration (in sec) = 3.500
-> Display cue image => #58
  Display images in full screen = false
  Scale images to fit = false
  Clear screen Stimulation = OVTK_GDF_Foot
  Cue Image 1 = D:/manip/BCINET/Backup/Images/cross-center.png
  Stimulation 1 = OVTK_StimulationId_ExperimentStart
  Cue Image 2 = D:/Manip/BCINET/Backup/Images/cue-center-Big.png
  Stimulation 2 = OVTK_GDF_Left
  Cue Image 3 = D:/Manip/BCINET/Backup/Images/intercue-center .png
  Stimulation 3 = OVTK_GDF_Start_Of_Trial
  Cue Image 4 = D:/Manip/BCINET/Backup/Images/intercue-center .png
  Stimulation 4 = OVTK_GDF_End_Of_Trial
Input stream 1=#1.Output stream 2, Input stream 2=#58 -> Identity => #59
#59.Output stream 1 -> Channel Selector "AUX"
  Channel List = $var{AuxChannels}
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "Notch"
  Filter Type = Band Stop
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 48
  High Cut-off Frequency (Hz) = 52
-> Temporal filter "Notch"
  Filter Type = Band Stop
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 148
  High Cut-off Frequency (Hz) = 152
-> Temporal filter "Notch"
  Filter Type = Band Stop
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 98
  High Cut-off Frequency (Hz) = 102
-> Temporal filter "Notch"
  Filter Type = Band Stop
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 198
  High Cut-off Frequency (Hz) = 202
-> Temporal Filter => #65
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 10
  High Cut-off Frequency (Hz) = 250
Data=#65, Stimulations=#59.Output stream 2 -> Signal display "ECG/EMGs signals"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#59.Output stream 1 -> Temporal Filter => #67
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
  Low Cut-off Frequency 2 (Hz) = 1
  High Cut-off Frequency 2 (Hz) = 40
Data=#67.Output signal 2, Stimulations=#59.Output stream 2 -> Signal display "Filtered signals (1-40Hz)"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 30
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = true
#67.Output signal -> Channel Selector "19 electrodes"
  Channel List = Fp1;F3;C3;P3;O1;F7;T7;P7;Fp2;F4;C4;P4;O2;F8;T8;P8;Fz;Cz;Pz
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter
  Spatial Filter Coefficients = 1; -1; 0; 0; 0; 0; 0; 0; 0; 0; 0; 0; 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0
  Number of Output Channels = 18
  Number of Input Channels = 19
  Filter matrix file =
-> Channel Rename => #71
  New channel names = Fp1-F3; Fp1-F7; F3-C3; F7-T7; C3-P3; T7-P7; P3-O1; P7-O1; Fz-Cz; Cz-Pz; Fp2-F4; Fp2-F8; F4-C4; F8-T8; C4-P4; T8-P8; P4-O2; P8-O2
Data=#71, Stimulations=#59.Output stream 2 -> Signal display "Bipolar (1-40 Hz)"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 30
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
