OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)
Comment
  For debug purposes...
Comment
  Measure connectivity for selected channels...
  ... average over one of the "channel" dimensions => node strength
  ... filter to frequencies of interest, and average over those
Comment
  Run the classifier trainer,
  stop the scenario when training is over
Settings
  EEGData = Test-[2022.05.05-15.36.18]-TRAINCOMPOSITE.csv
  ExtractionIdx = 1
  SignalsPath = signals
  TrainingPath = train
  OutputWeights = classifier-weights.xml
  ChannelNames = Fp1;Fp2;F7;F3;Fz;F4;F8;FC5;FC1;FC2;FC6;T7;C3;Cz;C4;T8;TP9;CP5;CP1;CP2;CP6;TP10;P7;P3;Pz;P4;P8;PO9;O1;Oz;O2;PO10
  StimulationEpoch = 3
  TimeWindowLength = 0.25
  TimeWindowShift = 0.161
  ConnectivityLength = 0.25
  ConnectivityOverlap = 36
  ConnectivityShift = 0.16
  AutoRegressiveOrder = 19
  PsdSize = 500

CSV File Reader => #0
  Filename = ${Player_ScenarioDirectory}/sessions/$var{ExtractionIdx}/$var{TrainingPath}/$var{EEGData}
#0.Output stream -> Channel Rename (32 Channel) => #1
  New channel names = $var{ChannelNames}
Input stream 1=#1, Input stream 2=#0.Output stimulation -> Identity => #2
Input signal=#2.Output stream 1, Input stimulations=#2.Output stream 2 -> Stimulation based epoching => #3
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = 0
  Stimulation 1 = OVTK_GDF_Left
-> Time based epoching
  Epoch duration (in sec) = $var{ConnectivityLength}
  Epoch intervals (in sec) = $var{ConnectivityShift}
-> Identity "SPLIT"
-> Connectivity Measure
  Channel subselection = A
  Metric = MagnitudeSquaredCoherence
  Connectivity Measure Length (in sec) = $var{ConnectivityLength}
  Connectivity Measure Overlap (in %) = 0
  DC removal = true
  FFT size (frequency taps) = $var{PsdSize}
  psd Method = Burg
  Auto-regressive model order = $var{AutoRegressiveOrder}
-> Matrix 3D to 2D
  Selection mode = Average
  Dimension to work on = 1
-> Channel Selector "Frequency Band Selector"
  Channel List = 22
  Action = Select
  Channel Matching Method = Smart
-> Matrix Transpose
-> Channel Selector
  Channel List = CP3
  Action = Select
  Channel Matching Method = Smart
-> Epoch average => #11
  Averaging type = Epoch block average
  Epoch count = 18.0
#3 -> Common Average Reference
-> Identity "SPLIT POWSPECTRUM"
-> Channel Selector
  Channel List = CP3
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching
  Epoch duration (in sec) = $var{TimeWindowLength}
  Epoch intervals (in sec) = $var{TimeWindowShift}
-> AutoRegressive Coefficients => #16
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
#16.PSD -> Matrix Transpose
-> Channel Selector "Frequency Band Selector"
  Channel List = 22
  Action = Select
  Channel Matching Method = Smart
-> Epoch average => #19
  Averaging type = Epoch block average
  Epoch count = 18.0
Input stream 1=#11, Input stream 2=#19 -> Feature aggregator => #20
Input signal=#2.Output stream 1, Input stimulations=#2.Output stream 2 -> Stimulation based epoching => #21
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = 0
  Stimulation 1 = OVTK_GDF_Right
-> Common Average Reference
-> Identity "SPLIT POWSPECTRUM"
-> Channel Selector
  Channel List = CP3
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching
  Epoch duration (in sec) = $var{TimeWindowLength}
  Epoch intervals (in sec) = $var{TimeWindowShift}
-> AutoRegressive Coefficients => #26
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
#26.PSD -> Matrix Transpose
-> Channel Selector "Frequency Band Selector"
  Channel List = 22
  Action = Select
  Channel Matching Method = Smart
-> Epoch average => #29
  Averaging type = Epoch block average
  Epoch count = 18.0
#21 -> Time based epoching
  Epoch duration (in sec) = $var{ConnectivityLength}
  Epoch intervals (in sec) = $var{ConnectivityShift}
-> Identity "SPLIT"
-> Connectivity Measure
  Channel subselection = A
  Metric = MagnitudeSquaredCoherence
  Connectivity Measure Length (in sec) = $var{ConnectivityLength}
  Connectivity Measure Overlap (in %) = 0
  DC removal = true
  FFT size (frequency taps) = $var{PsdSize}
  psd Method = Burg
  Auto-regressive model order = $var{AutoRegressiveOrder}
-> Matrix 3D to 2D
  Selection mode = Average
  Dimension to work on = 1
-> Channel Selector "Frequency Band Selector"
  Channel List = 22
  Action = Select
  Channel Matching Method = Smart
-> Matrix Transpose
-> Channel Selector
  Channel List = CP3
  Action = Select
  Channel Matching Method = Smart
-> Epoch average => #37
  Averaging type = Epoch block average
  Epoch count = 18.0
Input stream 1=#37, Input stream 2=#29 -> Feature aggregator => #38
Stimulations=#2.Output stream 2, Features for class 1=#20, Features for class 2=#38 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = ${Player_ScenarioDirectory}/sessions/$var{ExtractionIdx}/$var{TrainingPath}/$var{OutputWeights}
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_GDF_Left
  Class 2 label = OVTK_GDF_Right
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Number of partitions for k-fold cross-validation test = 10
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Randomize k-fold cross-validation test data = false
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
#0.Output stimulation -> 0x341d3912 Stimulation listener
  Log level to use = Information
Data=#0.Output stream, Stimulations=#0.Output stimulation -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

0x341d3912 Generic stream reader
  Filename = C:/Users/arthur.desbois/Documents/dev/openvibeScripting/openvibe-automation/generated/signals/motor-imagery.ov

0x341d3912 Generic stream reader
  Filename = ${Player_ScenarioDirectory}/$var{EEGData}

0x341d3912 CSV File Reader
  Filename = C:/Users/arthur.desbois/Documents/dev/openvibeScripting/openvibe-automation/generated/signals/training/Train-[2022.03.15-15.33.38]-TRIALS.csv
