OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Online Use
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  Use ACQ client or pre-recorded file
Comment
  Rename your channels if necessary
Comment
  Visualize activity in 1-40Hz
Comment
  Save recorded EEG signals for later use
Comment
  Spectrum pipeline
  after SPLIT box : selected features
Comment
  Connectivity pipeline
  after SPLIT box : selected features
Comment
  Direct feedback
  You can replace "Matrix Display"
  with any other visualization technique
Settings
  EEGDataLive = motor-imagery-live.ov
  ClassifWeights = classifier-weights.xml
  ExtractionIdx = 1
  MI_Stimulations = mi-stimulations.lua
  ChannelNames = Fp1;Fz;F3;F7;FT9;FC5;FC1;C3;T7;TP9;CP5;CP1;Pz;P3;P7;O1;Oz;O2;P4;P8;FCz;CP6;CP2;Cz;C4;T8;FT10;FC6;FC2;F4;F8;Fp2;AF7;AF3;AFz;F1;F5;FT7;FC3;C1;C5;TP7;CP3;P1;P5;PO7;PO3;POz;PO4;PO8;P6;P2;CPz;CP4;TP8;C6;C2;FC4;FT8;F6;AF8;AF4;F2;Iz
  TimeWindowLength = 0.25
  TimeWindowShift = 0.161
  ConnectivityLength = 1
  ConnectivityOverlap = 0
  AutoRegressiveOrder = 19
  PsdSize = 500
  ConnectivityShift = 1

0x341d3912 Generic stream reader
  Filename = C:/Users/arthur.desbois/Documents/dev/openvibeScripting/openvibe-automation/generated/Train_2_sub_01.ov

Acquisition client => #1
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#1.Experiment information, Input stream 2=#1.Signal stream, Input stream 3=#1.Stimulations -> Identity => #2
#2.Output stream 2 -> 0x341d3912 Channel Rename
  New channel names = $var{ChannelNames}
#2.Output stream 2 -> 0x341d3912 Channel Rename
  New channel names = CP1;CP3;C1;C3
Input stream 1=#2.Output stream 1, Input stream 2=#2.Output stream 2, Input stream 3=#2.Output stream 3 -> Identity => #5
#5.Output stream 2 -> 0x341d3912 Temporal Filter => #6
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
Data=#6 -> 0x341d3912 Signal display "Filtered signals (1-40Hz)"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Input stream 1=#5.Output stream 1, Input stream 2=#5.Output stream 2, Input stream 3=#5.Output stream 3 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/$var{EEGDataLive}
  Use compression = false
Input stream 1=#5.Output stream 2, Input stream 2=#5.Output stream 3 -> Identity => #9
#9.Output stream 1 -> Time based epoching
  Epoch duration (in sec) = $var{ConnectivityLength}
  Epoch intervals (in sec) = $var{ConnectivityShift}
-> Identity "SPLIT"
-> Connectivity Measure
  Channel subselection = A
  Metric = MagnitudeSquaredCoherence
  Connectivity Measure Length (in sec) = $var{ConnectivityLength}
  Connectivity Measure Overlap (in %) = 0
  DC removal = true
  FFT size (frequency taps) = $var{PsdSize}
  psd Method = Burg
  Auto-regressive model order = $var{AutoRegressiveOrder}
-> Matrix 3D to 2D
  Selection mode = Average
  Dimension to work on = 1
-> Channel Selector "Frequency Band Selector"
  Channel List = 22
  Action = Select
  Channel Matching Method = Smart
-> Matrix Transpose
-> Channel Selector
  Channel List = CP3
  Action = Select
  Channel Matching Method = Smart
-> Epoch average => #17
  Averaging type = Epoch block average
  Epoch count = 18.0
#9.Output stream 1 -> Common Average Reference => #18
-> Identity "SPLIT POWSPECTRUM"
-> Channel Selector
  Channel List = CP3
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching
  Epoch duration (in sec) = $var{TimeWindowLength}
  Epoch intervals (in sec) = $var{TimeWindowShift}
-> AutoRegressive Coefficients => #22
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
#22.PSD -> Matrix Transpose
-> Channel Selector "Frequency Band Selector"
  Channel List = 22
  Action = Select
  Channel Matching Method = Smart
-> Epoch average => #25
  Averaging type = Epoch block average
  Epoch count = 18.0
Input stream 1=#17, Input stream 2=#25 -> Feature aggregator => #26
Features=#26 -> Classifier processor => #27
  Filename to load configuration from = $var{ClassifWeights}
Input stream=#27.Probability values, Stimulations stream=#27.Labels -> CSV File Writer
  Filename = ${Player_ScenarioDirectory}/sessions/$var{ExtractionIdx}/results/Test-[$core{date}-$core{time}]-results-classif.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#18 -> Channel Selector
  Channel List = C4
  Action = Select
  Channel Matching Method = Name
-> Time based epoching
  Epoch duration (in sec) = $var{TimeWindowLength}
  Epoch intervals (in sec) = $var{TimeWindowShift}
-> AutoRegressive Coefficients => #31
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
#31.PSD -> Frequency Band Selector
  Frequencies to select = 22
-> Spectrum Average
  Considers zeros = false
-> 0x341d3912 Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#1.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Graz Motor Imagery BCI Stimulator => #36
  Lua Script = ${Player_ScenarioDirectory}/$var{MI_Stimulations}
  Number of Trials for Each Class = 20
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 20
  Wait For Beep Duration (in sec) = 0
  Wait For Cue Duration (in sec) = 3
  Display Cue Duration (in sec) = 3
  Feedback Duration (in sec) = 3
  End of Trial Minimum Duration (in sec) = 2.5
  End of Trial Maximum Duration (in sec) = 3.5
Stimulations=#36, Amplitude=#27.Hyperplane distance -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
