OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
0x790d75b8 = Arthur Desbois
0x9f5c4075 = Feature Extraction - Power Spectrum
0xf6b2e3fa = Metabox/Signal Processing
0xf8034a49 = INRIA
Settings
  ChannelSelected = FC1
  EpochDuration = 1
  EpochInterval = 1
  FilterOrder = 10
  PsdSize = 0
  FreqBand = 15:22
Input Input 1 -> #0
Output Output 1 <- #4

Channel Selector "$var{ChannelSelected}" => #0
  Channel List = $var{ChannelSelected}
  Action = Select
  Channel Matching Method = Name
-> Time based epoching
  Epoch duration (in sec) = $var{EpochDuration}
  Epoch intervals (in sec) = $var{EpochInterval}
-> AutoRegressive Coefficients => #2
  Order = $var{FilterOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
#2.PSD -> Frequency Band Selector
  Frequencies to select = $var{FreqBand}
-> Spectrum Average => #4
  Considers zeros = false
