OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)
Settings
  EEGData = MI-[2022.02.02-15.51.48]-TRAINCOMPOSITE-LEFT-RIGHT.csv
  ExtractionIdx = 1
  SignalsPath = signals
  TrainingPath = train
  OutputWeights = classifier-weights.xml
  ChannelNames = Fp1;Fz;F3;F7;FT9;FC5;FC1;C3;T7;TP9;CP5;CP1;Pz;P3;P7;O1;Oz;O2;P4;P8;FCz;CP6;CP2;Cz;C4;T8;FT10;FC6;FC2;F4;F8;Fp2;AF7;AF3;AFz;F1;F5;FT7;FC3;C1;C5;TP7;CP3;P1;P5;PO7;PO3;POz;PO4;PO8;P6;P2;CPz;CP4;TP8;C6;C2;FC4;FT8;F6;AF8;AF4;F2;Iz
  StimulationEpoch = 1.5
  TimeWindowLength = 0.4
  TimeWindowShift = 0.372
  AutoRegressiveOrder = 19
  PsdSize = 500

0x341d3912 Generic stream reader
  Filename = ${Player_ScenarioDirectory}/$var{EEGData}

CSV File Reader => #1
  Filename = ${Player_ScenarioDirectory}/sessions/$var{ExtractionIdx}/$var{TrainingPath}/$var{EEGData}
#1.Output stream -> Channel Rename (32 Channel) => #2
  New channel names = $var{ChannelNames}
-> 0x341d3912 Channel Selector
  Channel List = $var{ChannelNames}
  Action = Select
  Channel Matching Method = Smart
#2 -> Common Average Reference => #4
Input stream 1=#4, Input stream 2=#1.Output stimulation -> Identity => #5
Input signal=#5.Output stream 1, Input stimulations=#5.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = 0
  Stimulation 1 = OVTK_GDF_Left
-> Identity "SPLIT"
-> Channel Selector
  Channel List = CP5
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching
  Epoch duration (in sec) = $var{TimeWindowLength}
  Epoch intervals (in sec) = $var{TimeWindowShift}
-> AutoRegressive Coefficients => #10
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
#10.PSD -> Matrix Transpose
-> Channel Selector "Frequency Band Selector"
  Channel List = 12:15
  Action = Select
  Channel Matching Method = Smart
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 18
-> Feature aggregator => #14
Input signal=#5.Output stream 1, Input stimulations=#5.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = 0
  Stimulation 1 = OVTK_GDF_Right
-> Identity "SPLIT"
-> Channel Selector
  Channel List = CP5
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching
  Epoch duration (in sec) = $var{TimeWindowLength}
  Epoch intervals (in sec) = $var{TimeWindowShift}
-> AutoRegressive Coefficients => #19
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
#19.PSD -> Matrix Transpose
-> Channel Selector "Frequency Band Selector"
  Channel List = 12:15
  Action = Select
  Channel Matching Method = Smart
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 18
-> Feature aggregator => #23
Stimulations=#5.Output stream 2, Features for class 1=#14, Features for class 2=#23 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = ${Player_ScenarioDirectory}/sessions/$var{ExtractionIdx}/$var{TrainingPath}/$var{OutputWeights}
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_GDF_Left
  Class 2 label = OVTK_GDF_Right
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Number of partitions for k-fold cross-validation test = 10
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Randomize k-fold cross-validation test data = false
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
#1.Output stimulation -> 0x341d3912 Stimulation listener
  Log level to use = Information
Data=#1.Output stream, Stimulations=#1.Output stimulation -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
