OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Online Use
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  Use ACQ client or pre-recorded file
Comment
  Rename your channels if necessary
Comment
  Visualize activity in 1-40Hz
Comment
  Record signal files & session info
  for this online test
Comment
  Online Classification
  using selected features
  (pairs [channel + freq bands])
Comment
  Direct feedback
  You can replace "Matrix Display"
  with any other visualization technique
Comment
  Feedback using classification
  You can replace "Graz Viz" with another
  visualization technique...
Settings
  ClassifWeights = classifier-weights.xml
  ExtractionIdx = 1
  SignalsPath = signals
  TrainingPath = training
  MI_Stimulations = mi-stimulations.lua
  ChannelNames = Fp1;Fz;F3;F7;FT9;FC5;FC1;C3;T7;TP9;CP5;CP1;Pz;P3;P7;O1;Oz;O2;P4;P8;FCz;CP6;CP2;Cz;C4;T8;FT10;FC6;FC2;F4;F8;Fp2;AF7;AF3;AFz;F1;F5;FT7;FC3;C1;C5;TP7;CP3;P1;P5;PO7;PO3;POz;PO4;PO8;P6;P2;CPz;CP4;TP8;C6;C2;FC4;FT8;F6;AF8;AF4;F2;Iz
  TimeWindowLength = 0.25
  TimeWindowShift = 0.161
  AutoRegressiveOrder = 19
  PsdSize = 500

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal stream, Input stream 3=#0.Stimulations -> Identity => #1
#1.Output stream 2 -> Channel Rename (32 Channel) => #2
  New channel names = $var{ChannelNames}
Input stream 1=#1.Output stream 1, Input stream 2=#2, Input stream 3=#1.Output stream 3 -> Identity => #3
#3.Output stream 2 -> Temporal Filter => #4
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
Data=#4, Stimulations=#3.Output stream 3 -> Signal display "Filtered signals (1-40Hz)"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#3.Output stream 2 -> Common Average Reference => #6
Input stream 1=#6, Input stream 2=#3.Output stream 3 -> Identity => #7
Input signal=#7.Output stream 1, Input stimulations=#7.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = 3
  Epoch offset (in sec) = 0
  Stimulation 1 = OVTK_GDF_Left
  Stimulation 2 = OVTK_GDF_Right
-> Identity "SPLIT"
-> Channel Selector
  Channel List = C4
  Action = Select
  Channel Matching Method = Name
-> Time based epoching
  Epoch duration (in sec) = $var{TimeWindowLength}
  Epoch intervals (in sec) = $var{TimeWindowShift}
-> AutoRegressive Coefficients => #12
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
#12.PSD -> Matrix Transpose
-> Channel Selector "Frequency Band Selector"
  Channel List = 12:15
  Action = Select
  Channel Matching Method = Smart
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 18
-> Feature aggregator => #16
Features=#16 -> Classifier processor => #17
  Filename to load configuration from = $var{ClassifWeights}
Input stream=#17.Probability values, Stimulations stream=#17.Labels -> CSV File Writer
  Filename = ${Player_ScenarioDirectory}/sessions/$var{ExtractionIdx}/results/Test-[$core{date}-$core{time}]-results-classif.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#7.Output stream 1 -> Channel Selector
  Channel List = C4
  Action = Select
  Channel Matching Method = Name
-> Time based epoching
  Epoch duration (in sec) = $var{TimeWindowLength}
  Epoch intervals (in sec) = $var{TimeWindowShift}
-> AutoRegressive Coefficients => #21
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
#21.PSD -> Frequency Band Selector
  Frequencies to select = 22
-> Spectrum Average
  Considers zeros = false
-> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Experiment information=#3.Output stream 1, Signal=#3.Output stream 2, Stimulations=#3.Output stream 3 -> EDF File Writer
  Filename = ${Player_ScenarioDirectory}/Test-[$core{date}-$core{time}].edf
Input stream 1=#3.Output stream 1, Input stream 2=#3.Output stream 2, Input stream 3=#3.Output stream 3 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/Test-[$core{date}-$core{time}].ov
  Use compression = false
#0.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Graz Motor Imagery BCI Stimulator => #28
  Lua Script = ${Player_ScenarioDirectory}/$var{MI_Stimulations}
  Number of Trials for Each Class = 20
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 10
  Wait For Beep Duration (in sec) = 0
  Wait For Cue Duration (in sec) = 1.5
  Display Cue Duration (in sec) = 1.5
  Feedback Duration (in sec) = 3
  End of Trial Minimum Duration (in sec) = 2.5
  End of Trial Maximum Duration (in sec) = 3.5
Stimulations=#28, Amplitude=#17.Hyperplane distance -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false

0x341d3912 Generic stream reader
  Filename = C:/Users/arthur.desbois/Documents/dev/openvibeScripting/openvibe-automation/generated/Train_2_sub_01.ov
