OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Online Use
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  Rename your channels if necessary
Settings
  EEGData = motor-imagery-live.ov
  ClassifWeights = classifier-weights.xml
  ChannelNames = Fp1;Fz;F3;F7;FT9;FC5;FC1;C3;T7;TP9;CP5;CP1;Pz;P3;P7;O1;Oz;O2;P4;P8;FCz;CP6;CP2;Cz;C4;T8;FT10;FC6;FC2;F4;F8;Fp2;AF7;AF3;AFz;F1;F5;FT7;FC3;C1;C5;TP7;CP3;P1;P5;PO7;PO3;POz;PO4;PO8;P6;P2;CPz;CP4;TP8;C6;C2;FC4;FT8;F6;AF8;AF4;F2;Iz
  TimeWindowLength = 0.25
  TimeWindowShift = 0.16
  AutoRegressiveOrder = 19
  PsdSize = 500

Generic stream reader => #0
  Filename = $var{EEGData}
#0.Output stream 2 -> Timeout
  Timeout delay = 15
  Output Stimulation = OVTK_StimulationId_Label_00
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
Input stream 1=#0.Output stream 1, Input stream 2=#0.Output stream 2, Input stream 3=#0.Output stream 3 -> Identity => #3
#3.Output stream 2 -> 0x341d3912 Channel Rename (32 Channel)
  New channel names = $var{ChannelNames}
Input stream 1=#3.Output stream 2, Input stream 2=#3.Output stream 3 -> Identity => #5
Input signal=#5.Output stream 1, Input stimulations=#5.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = 3
  Epoch offset (in sec) = 1
  Stimulation 1 = OVTK_GDF_Left
  Stimulation 2 = OVTK_GDF_Right
-> Common Average Reference
-> Identity "SPLIT"
-> Channel Selector
  Channel List = CP5
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching
  Epoch duration (in sec) = $var{TimeWindowLength}
  Epoch intervals (in sec) = $var{TimeWindowShift}
-> AutoRegressive Coefficients => #11
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
#11.PSD -> Matrix Transpose
-> Channel Selector "Frequency Band Selector"
  Channel List = 12:15
  Action = Select
  Channel Matching Method = Smart
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 18
-> Feature aggregator => #15
Features=#15 -> Classifier processor => #16
  Filename to load configuration from = $var{ClassifWeights}
#16.Labels -> Stimulation listener "Classified"
  Log level to use = Information
#5.Output stream 2 -> Stimulation Filter => #18
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_GDF_Left
  Stimulation range end = OVTK_GDF_Right
-> Stimulation listener "Target"
  Log level to use = Information
Targets=#18, Classifier 1=#16.Labels -> 0x341d3912 Classifier Accuracy Measure
#0.Output stream 3 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
