graphs:
  - id: Scenario2
    nodes:
    - id: data_reader_A
      module: useful.csvfile_reader_new_list
      class: ReadFromCSV
      params:
        filenames: ["C:\\Users\\wafa.skhiri\\Development\\workspace_test\\sessions\\2\\extract\\Test-[2022.12.16-16.09.24]-SPECTRUM-MI.csv","C:\\Users\\wafa.skhiri\\Development\\workspace_test\\sessions\\2\\extract\\Test-[2022.12.16-16.21.35]-SPECTRUM-MI.csv","C:\\Users\\wafa.skhiri\\Development\\workspace_test\\sessions\\2\\extract\\Test-[2022.12.16-16.33.13]-SPECTRUM-MI.csv"]
    - id: data_reader_B
      module: useful.csvfile_reader_new_list
      class: ReadFromCSV
      params:
        filenames: ["C:\\Users\\wafa.skhiri\\Development\\workspace_test\\sessions\\2\\extract\\Test-[2022.12.16-16.09.24]-SPECTRUM-REST.csv","C:\\Users\\wafa.skhiri\\Development\\workspace_test\\sessions\\2\\extract\\Test-[2022.12.16-16.21.35]-SPECTRUM-REST.csv","C:\\Users\\wafa.skhiri\\Development\\workspace_test\\sessions\\2\\extract\\Test-[2022.12.16-16.33.13]-SPECTRUM-REST.csv"]

    # - id: Bands_B
    #   module: timeflux_dsp.nodes.spectral
    #   class: Bands
    #   params:
    #     bands:
    #       range_B: [8,30] 
    # - id: Bands_A
    #   module: timeflux_dsp.nodes.spectral
    #   class: Bands
    #   params:
    #     bands:
    #       range_A: [8,30] 

    - id: select_B
      module: useful.query_selection
      class: SelectFrequency
      params:
        selections:
          - [CP3, 8]
          - [CP1, 10]

    - id: select_A
      module: useful.query_selection
      class: SelectFrequency
      params:
        selections:
          - [CP3, 8]
          - [CP1, 10]


    # # ML node
    # # -------------
    - id: ML_LDA
      module: useful.lda
      class: LDA_NODE
      params: 
        cv: 3
        path: "C:\\Users\\wafa.skhiri\\Development\\workspace_test\\model.pkl"


    - id: display
      module: timeflux.nodes.debug
      class: Display
      params:
        meta: True
        
    edges:
    - source: data_reader_A
      target: select_A
    - source: data_reader_B
      target: select_B
    - source: select_A
      target: ML_LDA:MI
    - source: select_B
      target: ML_LDA:REST

    rate: 1