OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Data Acquisition
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  Write metadata in CSV file
  (used for getting sampling frequency, list of electrodes...)
Settings
  EEGData = C:/Users/arthur.desbois/Documents/dev/happyFeat/happyfeat/workspaces/moabbphysio/signals/S001R12.ov
  EEGMetaData = C:/Users/arthur.desbois/Documents/dev/happyFeat/happyfeat/workspaces/moabbphysio/signals/S001R12-META.csv

Generic stream reader => #0
  Filename = $var{EEGData}
Input signal=#0.Output Signal, Input stimulations=#0.Output Stimulations -> Stimulation based epoching => #1
  Epoch duration (in sec) = 0.1
  Epoch offset (in sec) = 0
  Stimulation 1 = OVTK_StimulationId_ExperimentStart
#0.Output Stimulations -> Identity => #2
  0xac367a9c = 6
Input stream=#1, Stimulations stream=#2 -> CSV File Writer
  Filename = $var{EEGMetaData}
  Precision = 10
  Append data = false
  Only last matrix = false
#0.Output Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStart
  Action to perform = Stop

Timeout
  Timeout delay = 1
  Output Stimulation = OVTK_StimulationId_Label_00
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
