OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
Comment
  Splitting EEG signal in two conditions and write several files for each condition :
  - EDF containing the signal from StimDelay, with duration StimEpoch
  - CSV file containing the spectrum of the signal from StimDelay, duration StimEpoch
  - CSV file containing the spectrum of the signal from [-StimEpoch], duration StimEpoch ("baseline")
Settings
  Directory = ${Player_ScenarioDirectory}
  EEGData = motor-imagery.ov
  SignalsPath = signals
  AnalysisPath = analysis
  TrainingPath = training
  OutputSpect1 = motor-imagery-LEFT.csv
  OutputSpect2 = motor-imagery-RIGHT.csv
  OutputCond1 = motor-imagery-LEFT.edf
  OutputCond2 = motor-imagery-RIGHT.edf
  OutputBaseline1 = motor-imagery-LEFT-BASELINE.csv
  OutputBaseline2 = motor-imagery-RIGHT-BASELINE.csv
  ChannelNames = Fp1;Fp2;F7;F3;Fz;F4;F8;FC5;FC1;FC2;FC6;T7;C3;Cz;C4;T8;TP9;CP5;CP1;CP2;CP6;TP10;P7;P3;Pz;P4;P8;PO9;O1;Oz;O2;PO10
  StimulationEpoch = 1.5
  StimulationDelay = 0
  TimeWindowLength = 0.4
  TimeWindowShift = 0.372
  AutoRegressiveOrder = 19
  PsdSize = 500

Generic stream reader => #0
  Filename = $var{Directory}/$var{SignalsPath}/$var{EEGData}
#0.Output stream 2 -> Channel Rename (32 Channel) => #1
  New channel names = $var{ChannelNames}
Input stream 1=#1, Input stream 2=#0.Output stream 3 -> Identity => #2
#2.Output stream 1 -> 0x341d3912 Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
#2.Output stream 1 -> Common Average Reference => #4
Input stream 1=#4, Input stream 2=#2.Output stream 2 -> Identity => #5
Input signal=#5.Output stream 1, Input stimulations=#5.Output stream 2 -> Stimulation based epoching => #6
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = $var{StimulationDelay}
  Stimulation 1 = OVTK_GDF_Left
-> Time based epoching
  Epoch duration (in sec) = $var{TimeWindowLength}
  Epoch intervals (in sec) = $var{TimeWindowShift}
-> AutoRegressive Coefficients => #8
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
#8.PSD -> 0x341d3912 Power Spectrum (burg) - Left condition
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Positive Data Only ? = false
  Gain = 1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
Input stream=#8.PSD -> CSV File Writer
  Filename = $var{Directory}/$var{SignalsPath}/$var{AnalysisPath}/$var{OutputSpect1}
  Precision = 10
  Append data = false
  Only last matrix = false
Signal=#6 -> EDF File Writer
  Filename = $var{Directory}/$var{SignalsPath}/$var{TrainingPath}/$var{OutputCond1}
Input signal=#5.Output stream 1, Input stimulations=#5.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = -$var{StimulationEpoch}
  Stimulation 1 = OVTK_GDF_Left
-> Time based epoching
  Epoch duration (in sec) = $var{TimeWindowLength}
  Epoch intervals (in sec) = $var{TimeWindowShift}
-> AutoRegressive Coefficients => #14
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
Input stream=#14.PSD -> CSV File Writer
  Filename = $var{Directory}/$var{SignalsPath}/$var{AnalysisPath}/$var{OutputBaseline1}
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#5.Output stream 1, Input stimulations=#5.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = -$var{StimulationEpoch}
  Stimulation 1 = OVTK_GDF_Right
-> Time based epoching
  Epoch duration (in sec) = $var{TimeWindowLength}
  Epoch intervals (in sec) = $var{TimeWindowShift}
-> AutoRegressive Coefficients => #18
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
Input stream=#18.PSD -> CSV File Writer
  Filename = $var{Directory}/$var{SignalsPath}/$var{AnalysisPath}/$var{OutputBaseline2}
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#5.Output stream 1, Input stimulations=#5.Output stream 2 -> Stimulation based epoching => #20
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = $var{StimulationDelay}
  Stimulation 1 = OVTK_GDF_Right
-> Time based epoching
  Epoch duration (in sec) = $var{TimeWindowLength}
  Epoch intervals (in sec) = $var{TimeWindowShift}
-> AutoRegressive Coefficients => #22
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
Input stream=#22.PSD -> CSV File Writer
  Filename = $var{Directory}/$var{SignalsPath}/$var{AnalysisPath}/$var{OutputSpect2}
  Precision = 10
  Append data = false
  Only last matrix = false
#22.PSD -> 0x341d3912 Power Spectrum (burg) - Right condition
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Positive Data Only ? = false
  Gain = 1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
Signal=#20 -> EDF File Writer
  Filename = $var{Directory}/$var{SignalsPath}/$var{TrainingPath}/$var{OutputCond2}
#0.Output stream 3 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
