OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
Settings
  Directory = ${Player_ScenarioDirectory}
  EEGData = MI-[2022.02.02-15.51.48]-TRAINCOMPOSITE-LEFT-RIGHT.csv
  SignalsPath = signals
  TrainingPath = training
  OutputWeights = classifier-weights.xml
  ChannelNames = Fp1;Fp2;F7;F3;Fz;F4;F8;FC5;FC1;FC2;FC6;T7;C3;Cz;C4;T8;TP9;CP5;CP1;CP2;CP6;TP10;P7;P3;Pz;P4;P8;PO9;O1;Oz;O2;PO10
  StimulationEpoch = 1.5
  TimeWindowLength = 0.4
  TimeWindowShift = 0.372
  AutoRegressiveOrder = 19
  PsdSize = 500

0x341d3912 Generic stream reader
  Filename = $var{Directory}/$var{EEGData}

CSV File Reader => #1
  Filename = $var{Directory}/$var{SignalsPath}/$var{TrainingPath}/$var{EEGData}
#1.Output stream -> Channel Rename (32 Channel) => #2
  New channel names = $var{ChannelNames}
-> 0x341d3912 Channel Selector
  Channel List = $var{ChannelNames}
  Action = Select
  Channel Matching Method = Smart
#2 -> Common Average Reference => #4
Input stream 1=#4, Input stream 2=#1.Output stimulation -> Identity => #5
Input signal=#5.Output stream 1, Input stimulations=#5.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = 0
  Stimulation 1 = OVTK_GDF_Left
-> Channel Selector
  Channel List = CP5
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching
  Epoch duration (in sec) = $var{TimeWindowLength}
  Epoch intervals (in sec) = $var{TimeWindowShift}
-> AutoRegressive Coefficients => #9
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
#9.PSD -> Frequency Band Selector
  Frequencies to select = 12:15
-> Spectrum Average
  Considers zeros = false
-> Feature aggregator => #12
Input signal=#5.Output stream 1, Input stimulations=#5.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = 0
  Stimulation 1 = OVTK_GDF_Right
-> Channel Selector
  Channel List = CP5
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching
  Epoch duration (in sec) = $var{TimeWindowLength}
  Epoch intervals (in sec) = $var{TimeWindowShift}
-> AutoRegressive Coefficients => #16
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
#16.PSD -> Frequency Band Selector
  Frequencies to select = 12:15
-> Spectrum Average
  Considers zeros = false
-> Feature aggregator => #19
Stimulations=#5.Output stream 2, Features for class 1=#12, Features for class 2=#19 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = $var{Directory}/$var{SignalsPath}/$var{TrainingPath}/$var{OutputWeights}
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_GDF_Left
  Class 2 label = OVTK_GDF_Right
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
#1.Output stimulation -> 0x341d3912 Stimulation listener
  Log level to use = Information
Data=#1.Output stream, Stimulations=#1.Output stimulation -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
