OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)

Generic stream reader => #0
  Filename = C:/Users/arthur.desbois/Documents/dev/MassimoExp/Train_2_sub_01.ov
#0.Output stream 2 -> Channel Rename (32 Channel) => #1
  New channel names = FP1;FP2;F7;F3;Fz;F4;F6;FC5;FC1;FC2;FC6;T7;C3;Cz;C4;T8;TP9;CP5;CP1;CP2;CP6;TP10;P7;P3;Pz;P4;P8;PO9;O1;Oz;O2;PO10
Input stream 1=#1, Input stream 2=#0.Output stream 3 -> Identity => #2
#2.Output stream 1 -> Common Average Reference => #3
Input stream 1=#3, Input stream 2=#2.Output stream 2 -> Identity => #4
Input signal=#4.Output stream 1, Input stimulations=#4.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = 3
  Epoch offset (in sec) = 0
  Stimulation 1 = OVTK_GDF_Left
-> Feature Extraction - Power Spectrum
  ChannelSelected = C4
  EpochDuration = 0.4
  EpochInterval = 0.372
  FilterOrder = 19
  PsdSize = 500
  FreqBand = 15:22
-> Feature aggregator => #7
Input signal=#4.Output stream 1, Input stimulations=#4.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = 3
  Epoch offset (in sec) = 0
  Stimulation 1 = OVTK_GDF_Right
-> Feature Extraction - Power Spectrum
  ChannelSelected = C4
  EpochDuration = 0.4
  EpochInterval = 0.372
  FilterOrder = 19
  PsdSize = 500
  FreqBand = 15:22
-> Feature aggregator => #10
Stimulations=#4.Output stream 2, Features for class 1=#7, Features for class 2=#10 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = ${Player_ScenarioDirectory}/motor-imagery-bci-config-classifier_6channelSpatialfilter_15to10.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_GDF_Left
  Class 2 label = OVTK_GDF_Right
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 7
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop

0x341d3912 Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
