OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.3.0)
Comment
  - CSV file containing the signal from StimDelay, with duration StimEpoch (for recombination before training)
  - CSV file containing the spectrum of the signal from StimDelay, duration StimEpoch (for analysis)
  - CSV file containing the spectrum of the signal from [-StimEpoch], duration StimEpoch ("baseline")
Comment
  Keep only the sub selection of channels
  set by the user
Comment
  TRIALS SIGNALS
  Both classes in one file
Comment
  TRIALS Connectivity matrix
  Class 1
Comment
  TRIALS Connectivity matrix
  Class 2
Comment
  BASELINE SPECTRUM
  Class 1
Comment
  BASELINE SPECTRUM
  Class 2
Settings
  EEGData = motor-imagery.ov
  SignalsPath = signals
  AnalysisPath = analysis
  TrainingPath = training
  OutputTrials = motor-imagery-TRIALS.csv
  OutputSpect1 = motor-imagery-CONNECTIVITY-LEFT.csv
  OutputSpect2 = motor-imagery-CONNECTIVITY-RIGHT.csv
  OutputBaseline1 = motor-imagery-BASELINE-LEFT.csv
  OutputBaseline2 = motor-imagery-BASELINE-RIGHT.csv
  ChannelNames = Fp1;Fp2;F7;F3;Fz;F4;F8;FC5;FC1;FC2;FC6;T7;C3;Cz;C4;T8;TP9;CP5;CP1;CP2;CP6;TP10;P7;P3;Pz;P4;P8;PO9;O1;Oz;O2;PO10
  StimulationEpoch = 1.5
  StimulationDelay = 0
  ConnectWindowLength = 0.5
  ConnectOverlapPercent = 0.0
  AutoRegressiveOrder = 15
  PsdSize = 500

0x341d3912 Generic stream reader
  Filename = C:/Users/arthur.desbois/Documents/dev/openvibeScripting/openvibe-automation/generated/signals/Train-[2022.03.15-15.43.22].ov

Generic stream reader => #1
  Filename = ${Player_ScenarioDirectory}/$var{SignalsPath}/$var{EEGData}
#1.Output stream 2 -> Channel Rename (32 Channel)
  New channel names = $var{ChannelNames}
-> Channel Selector
  Channel List = $var{ChannelNames}
  Action = Select
  Channel Matching Method = Smart
-> Common Average Reference => #4
Input stream 1=#4, Input stream 2=#1.Output stream 3 -> Identity => #5
Input signal=#5.Output stream 1, Input stimulations=#5.Output stream 2 -> Stimulation based epoching => #6
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = $var{StimulationDelay}
  Stimulation 1 = OVTK_GDF_Left
  Stimulation 2 = OVTK_GDF_Right
Input stream=#6, Stimulations stream=#5.Output stream 2 -> CSV File Writer
  Filename = ${Player_ScenarioDirectory}/$var{SignalsPath}/$var{TrainingPath}/$var{OutputTrials}
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#5.Output stream 1, Input stimulations=#5.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = $var{StimulationDelay}
  Stimulation 1 = OVTK_GDF_Left
-> Connectivity Measure => #9
  Metric = MagnitudeSquaredCoherence
  Connectivity Measure Length (in sec) = $var{ConnectWindowLength}
  Connectivity Measure Overlap (in %) = $var{ConnectOverlapPercent}
  DC removal = false
  FFT size (frequency taps) = $var{PsdSize}
  psd Method = Burg
  Auto-regressive model order = $var{AutoRegressiveOrder}
Input stream=#9 -> CSV File Writer
  Filename = ${Player_ScenarioDirectory}/$var{SignalsPath}/$var{AnalysisPath}/$var{OutputSpect1}
  Precision = 6
  Append data = false
  Only last matrix = false
Input signal=#5.Output stream 1, Input stimulations=#5.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = $var{StimulationDelay}
  Stimulation 1 = OVTK_GDF_Right
-> Connectivity Measure => #12
  Metric = MagnitudeSquaredCoherence
  Connectivity Measure Length (in sec) = $var{ConnectWindowLength}
  Connectivity Measure Overlap (in %) = $var{ConnectOverlapPercent}
  DC removal = false
  FFT size (frequency taps) = $var{PsdSize}
  psd Method = Burg
  Auto-regressive model order = $var{AutoRegressiveOrder}
Input stream=#12 -> CSV File Writer
  Filename = ${Player_ScenarioDirectory}/$var{SignalsPath}/$var{AnalysisPath}/$var{OutputSpect1}
  Precision = 6
  Append data = false
  Only last matrix = false
Input signal=#5.Output stream 1, Input stimulations=#5.Output stream 2 -> 0x341d3912 Stimulation based epoching
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = -$var{StimulationEpoch}
  Stimulation 1 = OVTK_GDF_Left
-> 0x341d3912 Connectivity Measure => #15
  Metric = MagnitudeSquaredCoherence
  Connectivity Measure Length (in sec) = $var{ConnectWindowLength}
  Connectivity Measure Overlap (in %) = $var{ConnectOverlapPercent}
  DC removal = false
  FFT size (frequency taps) = $var{PsdSize}
  psd Method = Burg
  Auto-regressive model order = $var{AutoRegressiveOrder}
Input stream=#15 -> 0x341d3912 CSV File Writer
  Filename = ${Player_ScenarioDirectory}/$var{SignalsPath}/$var{AnalysisPath}/$var{OutputBaseline1}
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#5.Output stream 1, Input stimulations=#5.Output stream 2 -> 0x341d3912 Stimulation based epoching
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = -$var{StimulationEpoch}
  Stimulation 1 = OVTK_GDF_Right
-> 0x341d3912 Connectivity Measure => #18
  Metric = MagnitudeSquaredCoherence
  Connectivity Measure Length (in sec) = $var{ConnectWindowLength}
  Connectivity Measure Overlap (in %) = $var{ConnectOverlapPercent}
  DC removal = false
  FFT size (frequency taps) = $var{PsdSize}
  psd Method = Burg
  Auto-regressive model order = $var{AutoRegressiveOrder}
Input stream=#18 -> 0x341d3912 CSV File Writer
  Filename = ${Player_ScenarioDirectory}/$var{SignalsPath}/$var{AnalysisPath}/$var{OutputBaseline2}
  Precision = 10
  Append data = false
  Only last matrix = false
#1.Output stream 2 -> Timeout
  Timeout delay = 5
  Output Stimulation = OVTK_StimulationId_ExperimentStop
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#1.Output stream 3 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
