OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.3.0)
Comment
  For debug purposes...
Comment
  For debug purposes...
Comment
  Only keep the selected channels
Comment
  Split the signal between
  LEFT and RIGHT stims
Comment
  Measure connectivity for selected channels...
  ... extract coherence "spectrum" for each pair...
  ... filter to frequencies of interest, and average over those
Comment
  /!\ nb of pairs is equal to sum(all integers [1:(nbChannels-1)])
  1, 3, 6, 10, 15, 21, 28, 36, ...
  Scenario graph can quickly get messy !!
Comment
  Run the classifier trainer,
  stop the scenario when training is over
Settings
  EEGData = MI-[2022.02.02-15.51.48]-TRAINCOMPOSITE-LEFT-RIGHT.csv
  SignalsPath = signals
  TrainingPath = training
  OutputWeights = classifier-weights.xml
  ChannelNames = Fp1;Fp2;F7;F3;Fz;F4;F8;FC5;FC1;FC2;FC6;T7;C3;Cz;C4;T8;TP9;CP5;CP1;CP2;CP6;TP10;P7;P3;Pz;P4;P8;PO9;O1;Oz;O2;PO10
  StimulationEpoch = 1.5
  AutoRegressiveOrder = 19
  PsdSize = 500
  ConnectWindowLength = 0.5
  ConnectOverlapPercent = 0.0

0x341d3912 Generic stream reader
  Filename = ${Player_ScenarioDirectory}/$var{EEGData}

CSV File Reader => #1
  Filename = ${Player_ScenarioDirectory}/$var{SignalsPath}/$var{TrainingPath}/$var{EEGData}
#1.Output stream -> Channel Rename (32 Channel) => #2
  New channel names = $var{ChannelNames}
-> 0x341d3912 Channel Selector
  Channel List = $var{ChannelNames}
  Action = Select
  Channel Matching Method = Smart
#2 -> Common Average Reference
-> Channel Selector => #5
  Channel List = CP5;C1;C3
  Action = Select
  Channel Matching Method = Smart
Input stream 1=#5, Input stream 2=#1.Output stimulation -> Identity => #6
Input signal=#6.Output stream 1, Input stimulations=#6.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = 0
  Stimulation 1 = OVTK_GDF_Left
-> Connectivity Measure
  Metric = MagnitudeSquaredCoherence
  Connectivity Measure Length (in sec) = $var{ConnectWindowLength}
  Connectivity Measure Overlap (in %) = $var{ConnectOverlapPercent}
  DC removal = false
  FFT size (frequency taps) = $var{PsdSize}
  psd Method = Burg
  Auto-regressive model order = $var{AutoRegressiveOrder}
-> Connectivity Spectrum Extractor
  Channel 1 = 0
  Channel 2 = 1
  Sampling Freq = 500
-> Frequency Band Selector
  Frequencies to select = 12:15
-> Spectrum Average
  Considers zeros = false
-> Feature aggregator => #12
Input signal=#6.Output stream 1, Input stimulations=#6.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = 0
  Stimulation 1 = OVTK_GDF_Right
-> Connectivity Measure
  Metric = MagnitudeSquaredCoherence
  Connectivity Measure Length (in sec) = $var{ConnectWindowLength}
  Connectivity Measure Overlap (in %) = $var{ConnectOverlapPercent}
  DC removal = false
  FFT size (frequency taps) = $var{PsdSize}
  psd Method = Burg
  Auto-regressive model order = $var{AutoRegressiveOrder}
-> Connectivity Spectrum Extractor
  Channel 1 = 0
  Channel 2 = 1
  Sampling Freq = 500
-> Frequency Band Selector
  Frequencies to select = 12:15
-> Spectrum Average
  Considers zeros = false
-> Feature aggregator => #18
Stimulations=#6.Output stream 2, Features for class 1=#12, Features for class 2=#18 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = ${Player_ScenarioDirectory}/$var{SignalsPath}/$var{TrainingPath}/$var{OutputWeights}
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_GDF_Left
  Class 2 label = OVTK_GDF_Right
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
Data=#1.Output stream, Stimulations=#1.Output stimulation -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#1.Output stimulation -> 0x341d3912 Stimulation listener
  Log level to use = Information

0x341d3912 Generic stream reader
  Filename = C:/Users/arthur.desbois/Documents/dev/openvibeScripting/openvibe-automation/generated/signals/motor-imagery.ov
