OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)
Settings
  ExtractionIdx = 1
  OutputWeights = outputweights.xml
  SignalsPath = signals
  AnalysisPath = extract
  TrainingPath = train

CSV class1 feat1 => #0
  Filename = C:/Users/arthur.desbois/Documents/dev/happyFeat/generated/signals/training/class1feats.csv
#0.Output stream -> Feature aggregator "FeatAgg1" => #1
Timeout => #2
  Timeout delay = 600
  Output Stimulation = OVTK_StimulationId_Train
CSV class2 feat1 => #3
  Filename = C:/Users/arthur.desbois/Documents/dev/happyFeat/generated/signals/training/class2feats.csv
#3.Output stream -> Feature aggregator "FeatAgg2" => #4
Stimulations=#2, Features for class 1=#1, Features for class 2=#4 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = ${Player_ScenarioDirectory}/$var{SignalsPath}/$var{TrainingPath}/$var{ExtractionIdx}/$var{OutputWeights}
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_GDF_Left
  Class 2 label = OVTK_GDF_Right
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
