OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)
Comment
  Class 1
Comment
  Class 2
Settings
  ExtractionIdx = 1
  InputClass1 = Test-[2022.11.29-15.36.29]-CONNECT-REST.csv
  InputClass2 = Test-[2022.11.29-15.36.29]-CONNECT-MI.csv
  SignalsPath = signals
  AnalysisPath = extract
  TrainingPath = train

CSV File Reader => #0
  Filename = ${Player_ScenarioDirectory}/$var{SignalsPath}/$var{AnalysisPath}/$var{ExtractionIdx}/$var{InputClass1}
#0.Output stream -> Identity "SPLIT"
-> Channel Selector "Frequency Band Selector"
  Channel List = 12
  Action = Select
  Channel Matching Method = Smart
-> Matrix Transpose
-> Channel Selector
  Channel List = CP3
  Action = Select
  Channel Matching Method = Smart
-> Epoch average => #5
  Averaging type = Epoch block average
  Epoch count = 7
Input stream=#5 -> CSV File Writer "CSV Class1 Feat1"
  Filename = ${Player_ScenarioDirectory}/$var{SignalsPath}/$var{TrainingPath}/class1feats.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#0.Output stream -> 0x341d3912 Stream End Detector => #7
  Stimulation name = OVTK_StimulationId_Label_00
CSV File Reader => #8
  Filename = ${Player_ScenarioDirectory}/$var{SignalsPath}/$var{AnalysisPath}/$var{ExtractionIdx}/$var{InputClass2}
#8.Output stream -> 0x341d3912 Stream End Detector => #9
  Stimulation name = OVTK_StimulationId_Label_00
Input stimulations 1=#7, Input stimulations 2=#9 -> 0x341d3912 Stimulation multiplexer
-> 0x341d3912 Stimulation Validator
  Stimulation to count = OVTK_StimulationId_Label_00
  Number for validation = 2
#8.Output stream -> Identity "SPLIT"
-> Channel Selector "Frequency Band Selector"
  Channel List = 12
  Action = Select
  Channel Matching Method = Smart
-> Matrix Transpose
-> Channel Selector
  Channel List = CP3
  Action = Select
  Channel Matching Method = Smart
-> Epoch average => #16
  Averaging type = Epoch block average
  Epoch count = 7
Input stream=#16 -> CSV File Writer "CSV Class2 Feat1"
  Filename = ${Player_ScenarioDirectory}/$var{SignalsPath}/$var{TrainingPath}/class2feats.csv
  Precision = 10
  Append data = false
  Only last matrix = false

Timeout
  Timeout delay = 600
  Output Stimulation = OVTK_StimulationId_Label_00
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
