OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)
Comment
  - CSV file containing the signal from StimDelay, with duration StimEpoch (for recombination before training)
  - CSV file containing the spectrum of the signal from StimDelay, duration StimEpoch (for analysis)
  - CSV file containing the spectrum of the signal from [-StimEpoch], duration StimEpoch ("baseline")
Comment
  Keep only the sub selection of channels
  set by the user
Comment
  /!\ CAR ONLY FOR SPECTRUM /!\
Comment
  TRIALS SIGNALS
  Both classes in one file
Comment
  Connectivity output :
  frequencies x channels x channels
  (ex: 500 x 64 x 64)

  Matrix 3D to 2D : average over last "channel" dimension :
  frequencies x channels
  (ex: 500 x 64)
Comment
  BASELINE SPECTRUM
  Class 1 & 2
Comment
  TRIALS SPECTRUM
  Class 1 & 2
Comment
  TRIALS Node Strength
  (computed from averaging the connectivity
   matrix across a "channel" dimension)
  Class 1 & 2
Settings
  EEGData = motor-imagery.ov
  ExtractionIdx = 1
  SignalsPath = signals
  AnalysisPath = extract
  TrainingPath = train
  OutputTrials = motor-imagery-TRIALS.csv
  OutputSpect1 = motor-imagery-SPECTRUM-LEFT.csv
  OutputSpect2 = motor-imagery-SPECTRUM-RIGHT.csv
  OutputConnect1 = motor-imagery-CONNECTIVITY-LEFT.csv
  OutputConnect2 = motor-imagery-CONNECTIVITY-RIGHT.csv
  OutputBaseline1 = motor-imagery-SPECTRUM-BASELINE-LEFT.csv
  OutputBaseline2 = motor-imagery-SPECTRUM-BASELINE-RIGHT.csv
  ChannelNames = Fp1;Fp2;F7;F3;Fz;F4;F8;FC5;FC1;FC2;FC6;T7;C3;Cz;C4;T8;TP9;CP5;CP1;CP2;CP6;TP10;P7;P3;Pz;P4;P8;PO9;O1;Oz;O2;PO10
  ChannelSubset =
  StimulationEpoch = 1.5
  StimulationDelay = 0
  TimeWindowLength = 0.25
  TimeWindowShift = 0.161
  AutoRegressiveOrder = 15
  ConnectivityLength = 0.5
  ConnectivityOverlap = 0.0
  ConnectivityShift = 0.25
  PsdSize = 256

0x341d3912 Generic stream reader
  Filename = C:/Users/arthur.desbois/Documents/dev/openvibeScripting/openvibe-automation/generated/signals/Train-[2022.03.15-15.43.22].ov

Generic stream reader => #1
  Filename = ${Player_ScenarioDirectory}/$var{SignalsPath}/$var{EEGData}
#1.Output stream 2 -> Channel Rename
  New channel names = $var{ChannelNames}
-> Channel Selector : subset => #3
  Channel List = $var{ChannelSubset}
  Action = Select
  Channel Matching Method = Smart
Input stream 1=#3, Input stream 2=#1.Output stream 3 -> Identity => #4
#4.Output stream 1 -> Common Average Reference => #5
Input stream 1=#5, Input stream 2=#4.Output stream 2 -> Identity => #6
Input signal=#6.Output stream 1, Input stimulations=#6.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = -$var{StimulationEpoch}
  Stimulation 1 = OVTK_GDF_Left
-> Time based epoching
  Epoch duration (in sec) = $var{TimeWindowLength}
  Epoch intervals (in sec) = $var{TimeWindowShift}
-> AutoRegressive Coefficients => #9
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
Input stream=#9.PSD -> CSV File Writer "CSV Writer: OutputBaseline1"
  Filename = ${Player_ScenarioDirectory}/$var{SignalsPath}/$var{AnalysisPath}/$var{ExtractionIdx}/$var{OutputBaseline1}
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#6.Output stream 1, Input stimulations=#6.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = -$var{StimulationEpoch}
  Stimulation 1 = OVTK_GDF_Right
-> Time based epoching
  Epoch duration (in sec) = $var{TimeWindowLength}
  Epoch intervals (in sec) = $var{TimeWindowShift}
-> AutoRegressive Coefficients => #13
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
Input stream=#13.PSD -> CSV File Writer "CSV Writer: OutputBaseline2"
  Filename = ${Player_ScenarioDirectory}/$var{SignalsPath}/$var{AnalysisPath}/$var{ExtractionIdx}/$var{OutputBaseline2}
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#6.Output stream 1, Input stimulations=#6.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = $var{StimulationDelay}
  Stimulation 1 = OVTK_GDF_Left
-> Time based epoching
  Epoch duration (in sec) = $var{TimeWindowLength}
  Epoch intervals (in sec) = $var{TimeWindowShift}
-> AutoRegressive Coefficients => #17
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
Input stream=#17.PSD -> CSV File Writer "CSV Writer: OutputSpect1"
  Filename = ${Player_ScenarioDirectory}/$var{SignalsPath}/$var{AnalysisPath}/$var{ExtractionIdx}/$var{OutputSpect1}
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#6.Output stream 1, Input stimulations=#6.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = $var{StimulationDelay}
  Stimulation 1 = OVTK_GDF_Right
-> Time based epoching
  Epoch duration (in sec) = $var{TimeWindowLength}
  Epoch intervals (in sec) = $var{TimeWindowShift}
-> AutoRegressive Coefficients => #21
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
Input stream=#21.PSD -> CSV File Writer "CSV Writer: OutputSpect2"
  Filename = ${Player_ScenarioDirectory}/$var{SignalsPath}/$var{AnalysisPath}/$var{ExtractionIdx}/$var{OutputSpect2}
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#4.Output stream 1, Input stimulations=#4.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = $var{StimulationDelay}
  Stimulation 1 = OVTK_GDF_Left
-> Time based epoching
  Epoch duration (in sec) = $var{ConnectivityLength}
  Epoch intervals (in sec) = $var{ConnectivityShift}
-> Connectivity Measure : Burg
  Metric = MagnitudeSquaredCoherence
  Connectivity Measure Length (in sec) = $var{ConnectivityLength}
  Connectivity Measure Overlap (in %) = 0
  DC removal = true
  FFT size (frequency taps) = $var{PsdSize}
  psd Method = Burg
  Auto-regressive model order = $var{AutoRegressiveOrder}
-> Matrix 3D to 2D => #26
  Selection mode = Average
  Dimension to work on = 2
Input stream=#26 -> CSV File Writer "CSV Writer: OutputConnect1"
  Filename = ${Player_ScenarioDirectory}/$var{SignalsPath}/$var{AnalysisPath}/$var{ExtractionIdx}/$var{OutputConnect1}
  Precision = 6
  Append data = false
  Only last matrix = false
Input signal=#4.Output stream 1, Input stimulations=#4.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = $var{StimulationDelay}
  Stimulation 1 = OVTK_GDF_Right
-> Time based epoching
  Epoch duration (in sec) = $var{ConnectivityLength}
  Epoch intervals (in sec) = $var{ConnectivityShift}
-> Connectivity Measure : Burg
  Metric = MagnitudeSquaredCoherence
  Connectivity Measure Length (in sec) = $var{ConnectivityLength}
  Connectivity Measure Overlap (in %) = 0
  DC removal = true
  FFT size (frequency taps) = $var{PsdSize}
  psd Method = Burg
  Auto-regressive model order = $var{AutoRegressiveOrder}
-> Matrix 3D to 2D => #31
  Selection mode = Average
  Dimension to work on = 2
Input stream=#31 -> CSV File Writer "CSV Writer: OutputConnect2"
  Filename = ${Player_ScenarioDirectory}/$var{SignalsPath}/$var{AnalysisPath}/$var{ExtractionIdx}/$var{OutputConnect2}
  Precision = 6
  Append data = false
  Only last matrix = false
Input signal=#4.Output stream 1, Input stimulations=#4.Output stream 2 -> Stimulation based epoching => #33
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = $var{StimulationDelay}
  Stimulation 1 = OVTK_GDF_Left
  Stimulation 2 = OVTK_GDF_Right
Input stream=#33, Stimulations stream=#4.Output stream 2 -> CSV File Writer
  Filename = ${Player_ScenarioDirectory}/$var{SignalsPath}/$var{TrainingPath}/$var{ExtractionIdx}/$var{OutputTrials}
  Precision = 10
  Append data = false
  Only last matrix = false
#1.Output stream 2 -> Timeout
  Timeout delay = 5
  Output Stimulation = OVTK_StimulationId_ExperimentStop
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#1.Output stream 3 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
