OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Data Acquisition
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  Stimulation Generation
  + Instructions display (arrows, crosses...)
Comment
  Stop scenario when reaching
  "Experiment Stop"
Comment
  Signal recorder
Comment
  Writing metadata in CSV file
  (used for getting sampling frequency, list of electrodes...)
Comment
  Signal Monitoring
Settings
  EEGData = MI-[$core{date}-$core{time}].ov
  EEGMetaData = MI-[$core{date}-$core{time}]-META.csv
  MI_Stimulations = mi-stimulations.lua
  SignalsDirectory = signals

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#0.Signal stream, Input stream 2=#0.Stimulations -> Identity => #1
  0xac367a9c = 6
Input stream 1=#0.Experiment information, Input stream 2=#1.Output stream 1, Input stream 3=#1.Output stream 2 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/$var{SignalsDirectory}/$var{EEGData}
  Use compression = false
#1.Output stream 1 -> Temporal Filter => #3
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
Input stream 1=#3, Input stream 2=#1.Output stream 1, Input stream 3=#1.Output stream 2 -> Identity => #4
  0xac367a9c = 6
Data=#4.Output stream 1, Stimulations=#4.Output stream 3 -> Signal display "Filtered signals (1-40Hz)"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Data=#4.Output stream 2, Stimulations=#4.Output stream 3 -> 0x341d3912 Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Input signal=#1.Output stream 1, Input stimulations=#1.Output stream 2 -> Stimulation based epoching => #7
  Epoch duration (in sec) = 0.1
  Epoch offset (in sec) = 0
  Stimulation 1 = OVTK_StimulationId_ExperimentStart
#0.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#0.Stimulations -> Identity => #9
  0xac367a9c = 6
Input stream=#7, Stimulations stream=#9 -> CSV File Writer
  Filename = ${Player_ScenarioDirectory}/$var{SignalsDirectory}/$var{EEGMetaData}
  Precision = 10
  Append data = false
  Only last matrix = false

Graz Motor Imagery BCI Stimulator => #11
  Lua Script = ${Player_ScenarioDirectory}/$var{MI_Stimulations}
  Number of Trials for Each Class = 20
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 20
  Wait For Beep Duration (in sec) = 0
  Wait For Cue Duration (in sec) = 3
  Display Cue Duration (in sec) = 3
  Feedback Duration (in sec) = 0
  End of Trial Minimum Duration (in sec) = 2.5
  End of Trial Maximum Duration (in sec) = 3.5
Stimulations=#11 -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
