OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)
Comment
  - CSV file containing the signal from StimDelay, with duration StimEpoch (for recombination before training)
  - CSV file containing the spectrum of the signal from StimDelay, duration StimEpoch (for analysis)
  - CSV file containing the spectrum of the signal from [-StimEpoch], duration StimEpoch ("baseline")
Comment
  Keep only the sub selection of channels
  set by the user
Comment
  TRIALS SIGNALS
  Both classes in one file
Comment
  TRIALS SPECTRUM
  Class 1
Comment
  TRIALS SPECTRUM
  Class 2
Comment
  BASELINE SPECTRUM
  Class 1
Comment
  BASELINE SPECTRUM
  Class 2
Settings
  EEGData = motor-imagery.ov
  ExtractionIdx = 1
  SignalsPath = signals
  AnalysisPath = extract
  TrainingPath = train
  OutputTrials = motor-imagery-TRIALS.csv
  OutputSpect1 = motor-imagery-SPECTRUM-LEFT.csv
  OutputSpect2 = motor-imagery-SPECTRUM-RIGHT.csv
  OutputBaseline1 = motor-imagery-BASELINE-LEFT.csv
  OutputBaseline2 = motor-imagery-BASELINE-RIGHT.csv
  ChannelNames = Fp1;Fp2;F7;F3;Fz;F4;F8;FC5;FC1;FC2;FC6;T7;C3;Cz;C4;T8;TP9;CP5;CP1;CP2;CP6;TP10;P7;P3;Pz;P4;P8;PO9;O1;Oz;O2;PO10
  StimulationEpoch = 1.5
  StimulationDelay = 0
  TimeWindowLength = 0.4
  TimeWindowShift = 0.372
  AutoRegressiveOrder = 19
  PsdSize = 500

Generic stream reader => #0
  Filename = ${Player_ScenarioDirectory}/$var{SignalsPath}/$var{EEGData}
#0.Output stream 2 -> Channel Rename (32 Channel)
  New channel names = $var{ChannelNames}
-> Channel Selector
  Channel List = $var{ChannelNames}
  Action = Select
  Channel Matching Method = Smart
-> Common Average Reference => #3
Input stream 1=#3, Input stream 2=#0.Output stream 3 -> Identity => #4
Input signal=#4.Output stream 1, Input stimulations=#4.Output stream 2 -> Stimulation based epoching => #5
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = $var{StimulationDelay}
  Stimulation 1 = OVTK_GDF_Left
  Stimulation 2 = OVTK_GDF_Right
Input stream=#5, Stimulations stream=#4.Output stream 2 -> CSV File Writer
  Filename = ${Player_ScenarioDirectory}/$var{SignalsPath}/$var{TrainingPath}/$var{ExtractionIdx}/$var{OutputTrials}
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#4.Output stream 1, Input stimulations=#4.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = $var{StimulationDelay}
  Stimulation 1 = OVTK_GDF_Left
-> Time based epoching
  Epoch duration (in sec) = $var{TimeWindowLength}
  Epoch intervals (in sec) = $var{TimeWindowShift}
-> AutoRegressive Coefficients => #9
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
Input stream=#9.PSD -> CSV File Writer
  Filename = ${Player_ScenarioDirectory}/$var{SignalsPath}/$var{AnalysisPath}/$var{ExtractionIdx}/$var{OutputSpect1}
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#4.Output stream 1, Input stimulations=#4.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = $var{StimulationDelay}
  Stimulation 1 = OVTK_GDF_Right
-> Time based epoching
  Epoch duration (in sec) = $var{TimeWindowLength}
  Epoch intervals (in sec) = $var{TimeWindowShift}
-> AutoRegressive Coefficients => #13
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
Input stream=#13.PSD -> CSV File Writer
  Filename = ${Player_ScenarioDirectory}/$var{SignalsPath}/$var{AnalysisPath}/$var{ExtractionIdx}/$var{OutputSpect2}
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#4.Output stream 1, Input stimulations=#4.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = -$var{StimulationEpoch}
  Stimulation 1 = OVTK_GDF_Left
-> Time based epoching
  Epoch duration (in sec) = $var{TimeWindowLength}
  Epoch intervals (in sec) = $var{TimeWindowShift}
-> AutoRegressive Coefficients => #17
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
Input stream=#17.PSD -> CSV File Writer
  Filename = ${Player_ScenarioDirectory}/$var{SignalsPath}/$var{AnalysisPath}/$var{ExtractionIdx}/$var{OutputBaseline1}
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#4.Output stream 1, Input stimulations=#4.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = $var{StimulationEpoch}
  Epoch offset (in sec) = -$var{StimulationEpoch}
  Stimulation 1 = OVTK_GDF_Right
-> Time based epoching
  Epoch duration (in sec) = $var{TimeWindowLength}
  Epoch intervals (in sec) = $var{TimeWindowShift}
-> AutoRegressive Coefficients => #21
  Order = $var{AutoRegressiveOrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
Input stream=#21.PSD -> CSV File Writer
  Filename = ${Player_ScenarioDirectory}/$var{SignalsPath}/$var{AnalysisPath}/$var{ExtractionIdx}/$var{OutputBaseline2}
  Precision = 10
  Append data = false
  Only last matrix = false
#0.Output stream 2 -> Timeout
  Timeout delay = 5
  Output Stimulation = OVTK_StimulationId_ExperimentStop
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#0.Output stream 3 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
